PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = block_cue_test
  logging level = debug
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Routines
  Routine Block_Cue
    CodeComponent stim_block_choice
      Code Type = Py
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      Begin Experiment:
        stim_cats = ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH', 'ON']


        #Get path for real and scrambled images and generate lists of images to be used
        real_imgs = ['images/%s%s.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]

        scram_imgs = ['images/%s%sscram.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]
      Begin Routine:
        prob_right = [-1,-1,-1]
        prob_left = [1,1,1]

        left_img = np.load(np.random.choice(real_imgs))

        right_img = np.load(np.random.choice(scram_imgs))
    PolygonComponent place_right
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4,0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_left
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4,0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4,0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4,0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4,0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4,0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probability_left
      flipVert = True
      image [set every repeat] = $left_img
      opacity = .7
      pos = (-4,0)
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    ImageComponent probability_right
      flipVert = True
      image [set every repeat] = $right_img
      opacity = .7
      pos = (4,0)
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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Flow
  Routine Block_Cue
