PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = Question_andProbe
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Routines
  Routine trial
  Routine q_cat
    CodeComponent q1_shuffle
      Code Type = Py
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      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file

        probe_loc = 'L'
        if probe_loc == 'L':
            probe_cue_img = 'cues/cue_left.png'
        elif probe_loc == 'R':
            probe_cue_img = 'cues/cue_right.png'

        # Randomize Order of FAOH
        #Initialize cat components


        cats = ['Face', 'Animal', 'Object', 'House']
        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'),
                                                                   cats4 = cats[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
      Each Frame:
        if frameN == 2:
            win.getMovieFrame()
      End Routine:
        win.saveMovieFrames('categoryQ.png')
        ## Map buttons to shuffled cats, assumed read L-R
        #
        #buttons = ['6','7','8','9']
        #categories = [c[0] for c in cats]
        #
        #button_map = dict(zip(categories,buttons))
        #cat_map  = dict(zip(buttons,categories))
        ##
        #if probe_loc == 'L':
        #    corAns = button_map[target_left[10]] # Index first letter after " images/" in target
        #
        #elif probe_loc == 'R':
        #    corAns = button_map[target_right[10]] # Index first letter after " images/" in target
        #
        #correct_category = cat_map[corAns]
        #trials.addData('objective_category', cat_map[corAns])
        #
        #if cat_resp.keys:
        #    category_response = cat_map[cat_resp.keys[-1]]
        #    trials.addData('category_response', category_response)
        #
        #else: #If no response
        #    category_response = None
        #    trials.addData('category_response', category_response)
        #
        #
        ##Calculate categorization accuracy
        #if correct_category == category_response:
        #    trials.addData('category_correct', 1)
        #    category_correct_count += 1
        #else:
        #    trials.addData('category_correct', 0)
        #
        #
        #
        #
        #
        #
    TextComponent q_category
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $cat_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent cat_resp
      allowedKeys = '6','7','8','9'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_cat
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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  Routine q_rec
    CodeComponent probe_noshuffle
      Code Type = Py
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n '
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file
        probe_loc = 'L'
        if probe_loc == 'L':
            probe_cue_img_2 = 'cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img_2 = 'cues/cue_right.png'
      Each Frame:
        if frameN == 2:
            win.getMovieFrame()
      End Routine:
        win.saveMovieFrames('recQ.png')
    TextComponent q_recognition
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $rec_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent rec_resp
      allowedKeys = '7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_rec
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img_2
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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Flow
  Routine q_cat
  Routine q_rec
