PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = EEG
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  logging level = debug
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Routines
  Routine trial
  Routine q_cat
    CodeComponent q1_shuffle
      Code Type = Py
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      Begin Routine:
        #Determine probe cue

        cat_trunc = ['F','A', 'O', 'H']
        cat_full = ['Face', 'Animal', 'Object', 'House']

        block_catmap = dict(zip(cat_trunc,cat_full))

        probe_loc = 'c1'
        if probe_loc == 'c1':
            probe_cue_txt = cat_comb[0]

        elif probe_loc == 'c2':
            probe_cue_txt = cat_comb[1]

        # Randomize Order of subcategory possible responses
        #Initialize cat components

        if probe_cue_txt == 'F':
            cats = ['Male', 'Female', 'X']

        elif probe_cue_txt == 'H':
            cats= ['House', 'Building', 'X']

        elif probe_cue_txt =='A':
            cats = ['Mammal', 'Non-Mammal', 'X']


        elif probe_cue_txt == 'O':
            cats = ['Handheld', 'Non-Handheld', 'X']

        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n'
                        u'{cats1:\u00a0^15} {cats2:\u00a0^15} {cats3:\u00a0^15}\n\n\n'
                        u'{b1:\u00a0^15} {b2:\u00a0^15} {b3:\u00a0^15}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'), b1 = u'1',b2 = u'2',b3 = u'3',
                                                                    ))
      End Routine:
        ## Map buttons to shuffled cats, assumed read L-R
        #
        buttons = ['6','7','8']
        categories = [c[0] for c in cats]

        button_map = dict(zip(categories,buttons))
        cat_map  = dict(zip(buttons,categories))
        #
        ## Set correct answer dependent on if target is congruent with probe
        #if probe_loc == 'c1':
        #    corAns = button_map[probe_cue_txt] # Index 2nd letter after " images/" in target
        #
        #elif probe_loc != 'c1':
        #    corAns = button_map['X'] # Index first letter after " images/" in target
        #
        #trials.addData('cat_correct', cat_map[corAns])
        #
        #if cat_resp.keys:
        #    trials.addData('cat_select', cat_map[cat_resp.keys[-1]])
        #
        #
        #
        #
    TextComponent q_category
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp
      allowedKeys = '6','7','8'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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  Routine q_catgen
    CodeComponent q1_shuffle_2
      Code Type = Py
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      Begin Routine:
        # Use routine if participant answered X
        if not cat_resp.keys or cat_map[cat_resp.keys[-1]] != 'X':
            continueRoutine = False

        # Randomize Order of FAOH
        cats_gen = [block_catmap[cat_comb[0]], block_catmap[cat_comb[1]]]
        shuffle(cats_gen)
        cat_question = (
                        u'Image Category:\n\n\n\n\n'
                        u'{cats1:\u00a0^15} {cats2:\u00a0^15} \n\n\n'
                        u'{b1:\u00a0^15} {b2:\u00a0^15}'.format(cats1 = cats_gen[0].encode().decode('utf-8'),
                                                                   cats2 = cats_gen[1].encode().decode('utf-8'),
                                                                   b1 = u'2',b2 = u'3'
                                                                    ))
      End Routine:
        ## Map buttons to shuffled cats, assumed read L-R
        #
        #buttons2 = ['7','8']
        #categories2 = [c[0] for c in cats_gen]
        #
        #button_map2 = dict(zip(categories2,buttons2))
        #cat_map2  = dict(zip(buttons2,categories2))
        #
        ##Correct answer is based on the general category of the target image
        #corAns = button_map2[probe_cue_txt] # Index first letter after " images/" in target
        #
        ##Add correct response & selected response to stored data
        #trials.addData('cat_correctgen', cat_map2[corAns])
        #
        #
        #if cat_resp_2.keys: #If response was made
        #    trials.addData('cat_selectgen', cat_map2[cat_resp_2.keys[-1]])
        #
        #
        #
        #
    TextComponent q_category_2
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp_2
      allowedKeys = '7','8'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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  Routine q_rec
    CodeComponent probe_noshuffle
      Code Type = Py
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n '
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file

        if cat_resp.keys and cat_map[cat_resp.keys[-1]] == 'X':
            continueRoutine = False
    TextComponent q_recognition
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
      text [set every repeat] = $rec_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent rec_resp
      allowedKeys = '7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 500
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = blocksTrunc.xlsx
    loopType = sequential
    nReps = 100
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    conditions:
      [OrderedDict([('cat_comb', 'FA'), ('exp_block', 'face'), ('prob_cat1', [-0.75, -0.75, -0.75]), ('prob_cat2', [0.75, 0.75, 0.75])]),
      OrderedDict([('cat_comb', 'AH'), ('exp_block', 'animal'), ('prob_cat1', [-0.75, -0.75, -0.75]), ('prob_cat2', [0.75, 0.75, 0.75])]),
      OrderedDict([('cat_comb', 'OF'), ('exp_block', 'object'), ('prob_cat1', [-0.75, -0.75, -0.75]), ('prob_cat2', [0.75, 0.75, 0.75])]),
      OrderedDict([('cat_comb', 'HO'), ('exp_block', 'house'), ('prob_cat1', [-0.75, -0.75, -0.75]), ('prob_cat2', [0.75, 0.75, 0.75])]),
      OrderedDict([('cat_comb', 'FA'), ('exp_block', 'neutral'), ('prob_cat1', [-0.25, -0.25, -0.25]), ('prob_cat2', [-0.25, -0.25, -0.25])])]
    Routine q_cat
    Routine q_catgen
    Routine q_rec
  LoopTerminator trials
