PsychoPy2experiment version="2020.2.10"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['subject'],expInfo['session'], expName, expInfo['date'])
  Experiment info = {'subject': '', 'session': '001', 'EyeTrack': 'False', 'ExpMon': 'EEG', 'HPColor': 'black', 'Control': 'False', 'feedback': 'False'}
  Full-screen window = True
  Monitor = $expInfo['ExpMon']
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = SEA
  logging level = debug
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Routines
  Routine eyetrack_calib
    CodeComponent eye_track_init
      Code Type = Py
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      Before Experiment:
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        #%% Eyelink Init Code Comparison
        # SETP 2: open a connection to the tracker
        # replace the IP address with None will open a simulated connection
        if expInfo['EyeTrack']:
            tk = pylink.EyeLink('100.1.1.1')
            scnWidth, scnHeight = win.size

            # STEP 3: Open an EDF data file on the Host and write a file header
            # The file name should not exceeds 8 characters
            dataFileName = expInfo['subject'] + '_' + expInfo['session']+ '.EDF'
            tk.openDataFile(dataFileName)
            # add personalized data file header (preamble text)
            tk.sendCommand("add_file_preamble_text 'SEA Exp'")
        else:
            pylink.EyeLink.dummy_open
            tk = pylink.EyeLink(None)
      Begin Routine:
        if expInfo['EyeTrack']:
            # set up a custom graphics envrionment (EyeLinkCoreGraphicsPsychopy) for calibration
            genv = EyeLinkCoreGraphicsPsychoPy(tk, win)

            # Configure the calibration target, could be a 'circle',
            # a movie clip ('movie'), a 'picture', or a 'spiral', the default is a circle
            genv.calTarget = 'circle'


            pylink.openGraphicsEx(genv)

            # STEP 5: Set up the tracker
            # put the tracker in idle mode before we change its parameters
            tk.setOfflineMode()
            pylink.pumpDelay(100)

            # IMPORTANT: send screen resolution to the tracker
            # see Eyelink Installation Guide, Section 8.4: Customizing Your PHYSICAL.INI Settings
            tk.sendCommand("screen_pixel_coords = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

            # save screen resolution in EDF data, so Data Viewer can correctly load experimental graphics
            # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
            tk.sendMessage("DISPLAY_COORDS = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

            # sampling rate, 250, 500, 1000, or 2000; this command is not supported for EyeLInk II/I trackers
            # tk.sendCommand("sample_rate 1000")

            # detect eye events based on "GAZE" (or "HREF") data
            tk.sendCommand("recording_parse_type = GAZE")

            # Saccade detection thresholds: 0-> standard/coginitve, 1-> sensitive/psychophysiological
            # see Eyelink User Manual, Section 4.3: EyeLink Parser Configuration
            tk.sendCommand("select_parser_configuration 0")

            # choose a calibration type, H3, HV3, HV5, HV13 (HV = horiztonal/vertical),
            # tk.setCalibrationType('HV9') also works, see the Pylink manual
            tk.sendCommand("calibration_type = HV5")

            # tracker hardware, 1-EyeLink I, 2-EyeLink II, 3-Newer models (1000/1000Plus/Portable DUO)
            hardware_ver = tk.getTrackerVersion()

            # tracking software version
            software_ver = 0
            if hardware_ver == 3:
                tvstr = tk.getTrackerVersionString()
                vindex = tvstr.find("EYELINK CL")
                software_ver = float(tvstr.split()[-1])

            # sample and event data saved in EDF data file
            # see sectin 4.6 of the EyeLink user manual, software version > 4 adds remote tracking (and thus HTARGET)
            tk.sendCommand("file_event_filter = LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT")
            if software_ver >= 4:
                tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
            else:
                tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

            # sample and event data available over the link
            tk.sendCommand("link_event_filter = LEFT,RIGHT,FIXATION,FIXUPDATE,SACCADE,BLINK,BUTTON,INPUT")
            if software_ver >= 4:
                tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
            else:
                tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

            # STEP 6:  Show task instructions and calibrate the tracker
            msg = visual.TextStim(win, text='Calibration will begin shortly\n' +
                                                'In the task, quickly move your eyes to look at a dot (target) when it appears',
                                                font='Courier New',
                                                units='norm', pos=(0, 0), height=0.07, wrapWidth=None, ori=0,
                                                color='white', colorSpace='rgb', opacity=1,
                                                languageStyle='LTR',
                                                depth=0.0)
            msg.draw()
            win.flip()
            event.waitKeys()

            # set up the camera and calibrate the tracker
            tk.doTrackerSetup()

        else:
            continueRoutine = False
  Routine feedback
    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        from psychopy.tools.monitorunittools import deg2pix
        from psychopy import monitors
      Begin Experiment:
        mon = monitors.Monitor('EEG')

        incor_lw = deg2pix(0.4, mon)
      Begin Routine:
        if expInfo['feedback']:
            if corDetect:
                fbck_cor.opacity = 0.7
                fbck_incor.opacity = 0
            else:
                fbck_cor.opacity = 0
                fbck_incor.opacity = 0.7
        else:
            continueRoutine = False
      End Routine:
        #Send Trial Information to Eyetracker for later condition sorting
        (tk.sendMessage, trial_type)
        ##%  Eye Link Code
        #Stop recording
        tk.stopRecording()
        # send trial variables to record in the EDF data file
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration

        # send over the standard 'TRIAL_RESULT' message to mark the end of trial
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
        tk.sendMessage('TRIAL_RESULT %d' % trial_count)
    PolygonComponent fbck_cor
      fillColor = $[-.75,.75,-.75]
      lineColor = $[-.75,.75,-.75]
      opacity = .7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent fbck_incor
      fillColor = $[.75,-.75,-.75]
      lineColor = $[.75,-.75,-.75]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine break_2
    CodeComponent trial_breaks
      Code Type = Auto->JS
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      Before Experiment:
        import math
      Begin Experiment:
        blocks_count = 0
        #Counter for eye tracker
        trial_count = 0
        #Counter for categorization accuracy
        category_correct_count = 0
        trial_counter = 0
      Begin Routine:
        #Taking a break every Block
        blocks_total = blocks.nTotal #Total # of blocks to be run
        blocks_count = blocks.thisN
        block_complete = ''
        categorization_accuracy = ''

        if blocks_count == 0:
            continueRoutine = False
        else:
        #    blocks_count +=1
            block_complete = '\n\n\n\n\n\nBlocks Completed: {num_done}/{num_total}'.format(num_done = blocks_count, num_total = blocks_total)
            categorization_accuracy = '\n\n You correctly categorized {percent_correct:.0%} of the images!'.format(percent_correct =  category_correct_count/trial_counter)
            # STEP 5: Set up the tracker
            # put the tracker in idle mode before we change its parameters
            tk.setOfflineMode()
            tk.sendMessage("Break")
            pylink.pumpDelay(100)
            #Reset category count every block and trial count
            category_correct_count = 0
            trial_counter = 0
    KeyboardComponent end_break
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent break_text
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = norm
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      text:
        Great job! Take a  break to rest your eyes if you need to.








        Press any button to resume when you are ready
    TextComponent block_count
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $block_complete
      units = norm
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    TextComponent cat_accuracy
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $categorization_accuracy 
      units = norm
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    TextComponent countdown_timer
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 110
      stopVal [duration (s)] = 10
      units = norm
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      text [set every frame]:
        $round(120 - t, ndigits = 1)
  Routine eyetrack_recalib
    CodeComponent eye_recalib
      Code Type = Auto->JS
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      Begin Routine:
        #Taking a break every N trials
        #Recalibrate eyetracker after break
        if blocks_count == 0:
            continueRoutine = False
        else:
            if expInfo['EyeTrack']:
                # STEP 6:  Show task instructions and calibrate the tracker
                msg = visual.TextStim(win, text='Calibration will begin shortly\n' +
                                                'In the task, quickly move your eyes to look at a dot (target) when it appears',
                                                font='Courier New',
                                                units='norm', pos=(0, 0), height=0.07, wrapWidth=None, ori=0,
                                                color='white', colorSpace='rgb', opacity=1,
                                                languageStyle='LTR',
                                                depth=0.0)
                msg.draw()
                win.flip()
                event.waitKeys()

                # set up the camera and calibrate the tracker
                tk.doTrackerSetup()
            else:
                continueRoutine = False
  Routine Thanks_msg
    CodeComponent close_eyetrack
      Code Type = Py
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      Begin Routine:
        if expInfo['EyeTrack']:
            # STEP 8: close the EDF data file and put the tracker in idle mode
            tk.setOfflineMode()
            pylink.pumpDelay(100)
            tk.closeDataFile()

            # STEP 9: download EDF file to Display PC and put it in local folder ('edfData')
            msg = 'Thank you for being a participant! \n\n\n\n\n\nEDF data is transfering from EyeLink Host PC...'
            edfTransfer = visual.TextStim(win, text=msg, color='white')
            edfTransfer.draw()
            win.flip()
            pylink.pumpDelay(500)

            # make sure the 'edfData' folder is there, create one if not
            dataFolder = os.getcwd() + '/edfData/'
            if not os.path.exists(dataFolder):
                os.makedirs(dataFolder)
            tk.receiveDataFile(dataFileName, 'edfData' + os.sep + dataFileName)

            # STEP 10: close the connection to tracker
            tk.close()

        #    # STEP 11: make sure everything is closed down
        #    core.quit()
        else:
            pass
    TextComponent thanks_txt
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for being a participant! 
      units = norm
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    KeyboardComponent EndExp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block_Cue
    CodeComponent stim_block_choice
      Code Type = Py
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      Begin Experiment:
        #Set up image lists & experiment parameters
        n_imgs = 16
        n_trial_types = 18
        n_block_types = 3

        stim_cats = ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH', 'ON']

        if not quest_estimates:
            quest_estimates = {'../images/%s%s' %(stim_cats[i], x) : 1 for i in range(len(stim_cats)) for x in range(1,3)}

        #Get path for real and scrambled images
        real_imgs = ['../images/%s%s.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]

        scram_imgs = ['../images/%s%sscram.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]


        #Generate Stimulus Lists for the whole experiment to ensure that each exemplar is presented in each condition equally

        expect_left_trials, expect_right_trials, expect_neutral_trials, expect_high_trials, expect_low_trials = ea.generate_stim(real_imgs, scram_imgs, trial_conditions, [2/3, 1/3], 'Spatial')
      Begin Routine:
        ##% Eye Track Code
        # put the tracker in idle mode before we start recording
        tk.setOfflineMode()
        pylink.pumpDelay(100)

        # Set which trials get implemented in the condition

        #Rows that refer to condition file set in loop
        conditions = pd.read_excel(trial_conditions)
        # Create dict to store indices of conditions file by block
        trials = {cond : '' for cond in conditions.exp_loc.unique() }
        for cond in conditions.exp_loc.unique():
            start_ind = conditions.index[conditions['exp_loc'] == cond][0]
            end_ind = conditions.index[conditions['exp_loc'] == cond][-1] + 1 #Adding +1 to include last index
            trials[cond] = '{start}:{end}'.format(start = start_ind, end = end_ind)



        #Refer to the previously copied dicts that contain all possible trials
        #(this enables having arbitrary block size while maintaing each exemplar is presented with the same frequency
        if exp_block == 'left':
            bloc_type = trials['L']
            targets_left = expect_left_trials['left_stims'] # Higher prob real left
            targets_right = expect_left_trials['right_stims']

            trial_repeats = 4

        elif exp_block == 'right':
            bloc_type = trials['R']
            targets_left = expect_right_trials['left_stims'] # Higher prob real left
            targets_right = expect_right_trials['right_stims']

            trial_repeats = 4

        elif exp_block == 'neutral':
            bloc_type = trials['N']

            targets_left = expect_neutral_trials['left_stims'] # Higher prob real left
            targets_right = expect_neutral_trials['right_stims']

            if expInfo['Control']:
                trial_repeats = 2
            else:
                trial_repeats = 4

        elif exp_block == 'high':
            bloc_type = trials['Hi']
            targets_left = expect_high_trials['left_stims']
            targets_right = expect_high_trials['right_stims']

            trial_repeats = 4
        elif exp_block == 'low':
            bloc_type = trials['Lo']

            targets_left = expect_low_trials['left_stims']
            targets_right = expect_low_trials['right_stims']

            trial_repeats = 4
        #randomize order of stimuli & freq of Real/Scram
        for exp_types in targets_left.keys(): #dict keys should be identical regardless of left vs right or 1st vs 2nd
            #Shuffle images
            shuffle(targets_left[exp_types])
            shuffle(targets_right[exp_types])

        # Define ITI Distribution per block
        #Define possible ITI Vals & number of trials in a block

        numTrials = n_imgs * n_trial_types * n_block_types # num exemplars * num trials * blocks (Total trials in a block) (Extra to prevent empty lists)
        if expInfo['feedback']:
            ITI_vals = np.array([0.5, 1])
        else:
            ITI_vals = np.array([1, 1.5])
        #Sample from exponential distribution
        lam = 1 # This is set s.t. 1/lambda = value of first interval. i.e exp dist mean is T1
        xdist = lam * np.exp(-lam * ITI_vals)

        #Normalize and generate counts
        xdist_norm = numTrials * (xdist/ sum(xdist));
        ITI_counts = np.round(xdist_norm).astype(int)

        #Set ITI for each trial for one block
        #And randomly shuffle
        ITI_list = np.random.permutation(np.repeat(ITI_vals, ITI_counts))

        ITI_list = list(ITI_list)
    PolygonComponent place_right
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4,0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_left
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4,0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4,0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4,0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4,0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4,0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine stim
    CodeComponent stim_presentation
      Code Type = Py
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      Before Experiment:
        #Make Filter store in params dict
        # Make param dict
        params = {'imsize' : [300,300],
              'imbgrd' : 127,
              'categories' : ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH','ON']}

        params['filter'] = ea.make_filter(params)
      Begin Routine:
        win.callOnFlip(tk.sendMessage,'stim_onset')
      Each Frame:
        #Set graded conntrast of images for entire presentation

        if frameN <stim_duration:
            F1 = grad_contr_left[frameN] * params['filter']
            F2 = grad_contr_right[frameN] * params['filter']
            left_stim = np.array(img_left * F1)
            right_stim = np.array(img_right * F2)
    PolygonComponent place_right_2
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent place_left_2
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_R_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_R_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_L_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_L_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    ImageComponent stim_left_2
      flipVert = True
      image [set every frame] = $left_stim
      pos = (-4, 0)
      size = (4, 4)
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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    ImageComponent stim_right_2
      flipVert = True
      image [set every frame] = $right_stim
      pos = (4, 0)
      size = (4, 4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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    PolygonComponent stim_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = stim_duration
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  Routine init_fix
    CodeComponent ITI_Select
      Code Type = Auto->JS
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      Begin Routine:
        ##% Eyelink Code
        # send the standard "TRIALID" message to mark the start of a trial
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
        trial_count += 1 # Manual trial counter for eyelink
        trial_counter += 1 # Manual counter for categorization accuracy (gets reset every block)
        tk.sendMessage('TRIALID %d' % trial_count)

        # record_status_message : show some info on the Host PC - OPTIONAL
        # here we show how many trial has been tested
        tk.sendCommand("record_status_message 'Trial number %s'"% trial_count)
        # start recording
        # arguments: sample_to_file, events_to_file, sample_over_link, event_over_link (1-yes, 0-no)
        err = tk.startRecording(1, 1, 1, 1)
        pylink.pumpDelay(100)  # wait for 100 ms to cache some samples

        #Get ITI for trial
        #Initiation of ITI_list is in "Block_Cue" Routine
        ITI_duration = ITI_list.pop()

        thisExp.addData('ITI', ITI_duration)

        win.callOnFlip(tk.sendMessage,'init_fix')
    PolygonComponent place_left_3
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent place_right_3
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent pre_cue_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine blank_pre
    PolygonComponent place_right_4
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent place_left_4
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent long_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent hi_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent hi_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent long_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent post_cue_fix2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    CodeComponent load_stim_2
      Code Type = Py
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      Begin Routine:
        win.callOnFlip(tk.sendMessage, 'prestim_fix')

        #Select which stimuli to present
        #Pick for left image
        target_left = targets_left[trial_type].pop()

        #Pick right image
        target_right = targets_right[trial_type].pop()

        thisExp.addData('stim_left', target_left)
        thisExp.addData('stim_right', target_right)

        #Load .npy of images
        img_left = np.load(target_left)
        img_right = np.load(target_right)

        #Ramp up and down stim contrast with peak
        #contrast at 66.7 mS (4 frames assuming 60Hz)
        stim_left_contrast = quest_estimates[target_left[:13]]
        stim_right_contrast = quest_estimates[target_right[:13]]

        if not expInfo['frameRate']: #Can't measure FR, e.g. dropping frames
            nC = 4
        elif np.isclose(expInfo['frameRate'], 120, rtol = .1):
            nC = 8 #Num frames of presentation
        elif np.isclose(expInfo['frameRate'], 60, rtol = .1):
            nC =4
        else:
            nC = 8

        minC = 0.001
        maxC = stim_left_contrast
        grad_contr_left = np.linspace(minC,maxC,nC)

        minC = 0.001
        maxC = stim_right_contrast
        grad_contr_right = np.linspace(minC,maxC,nC)

        #New stim duration in frames
        stim_duration = len(grad_contr_left) #left and right should have same duration
  Routine att_cue
    CodeComponent att_cue_placement_3
      Code Type = Auto->JS
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      Begin Routine:
        if att_loc == 'L':
            att_left_opac = 1
            att_right_opac = 0

        elif att_loc == 'R':
            att_left_opac = 0
            att_right_opac = 1

        elif att_loc == 'N':
            #Maybe change this later to be the same in both control and main task
            if expInfo['Control']:
                att_left_opac = 0
                att_right_opac = 0
            else:
                att_left_opac = 1
                att_right_opac = 1

        #EyeLink Code
        win.callOnFlip(tk.sendMessage,'attention_cue_onset')
    PolygonComponent place_right_5
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent place_left_5
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent long_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent hi_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent hi_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent long_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    ImageComponent att_left_2
      color = $[-1,-1,-1]
      image = ../cues/cue_left.png
      opacity [set every repeat] = att_left_opac
      pos = (-0.4, 0)
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      texture resolution = 512
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    ImageComponent att_right_2
      color = $[-1,-1,-1]
      image [set every repeat] = ../cues/cue_right.png
      opacity [set every repeat] = att_right_opac
      pos = (0.4, 0)
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      texture resolution = 512
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    PolygonComponent att_cue_fix_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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  Routine instructions
    CodeComponent instructions_text
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['Control']:
            instructions_type = 'task_instructions_control.xlsx'
            trial_conditions = 'conditions_control.xlsx'
            if expInfo['HPColor'] == 'black':
                block_conditions = 'blocks_black-HP-control.xlsx'
            elif expInfo['HPColor'] == 'white':
                block_conditions = 'blocks_white-HP-control.xlsx'
        else:
            instructions_type = 'task_instructions.xlsx'
            trial_conditions = 'conditions.xlsx'
            if expInfo['HPColor'] == 'black':
                block_conditions = 'blocks_black-HP.xlsx'
            elif expInfo['HPColor'] == 'white':
                block_conditions = 'blocks_white-HP.xlsx'
      Begin Routine:
        if instruction_purpose == 'fixation':
            fix_on = 0.7
        else:
            fix_on = 0

        instruction = instruction_text
    TextComponent instr_txt
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction
      units = norm
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    PolygonComponent Fix_Example_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity [set every repeat] = fix_on
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent load_questimate_2
      Code Type = Auto->JS
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      Before Experiment:
        #Import necessary packages
        try:
            import cPickle as pickle
        except ImportError:  # Python 3.x
            import pickle

        import EASTO_funcs as ea
        import pandas as pd

        #Import QUEST estimates for subject
        quest_file = gui.fileOpenDlg('.')
        if not quest_file:
            #    core.quit()
            print('Using Arbitrary Contrasts for Tests')
            #Gets initiated with target stim loading
            quest_estimates = []
        else:
            with open(quest_file[0], 'rb') as handle:
                quest_estimates = pickle.load(handle)
  Routine blank_post
    PolygonComponent post_stim_fix
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_left_7
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_right_7
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    CodeComponent ET_postmsg
      Code Type = Auto->JS
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      Begin Routine:
        win.callOnFlip(tk.sendMessage,'poststim_fix')
  Routine q_cat
    CodeComponent q1_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        # Randomize Order of FAOH
        #Initialize cat components

        if probe_loc == 'L':
            probe_cue_img = '../cues/cue_left.png'
        elif probe_loc == 'R':
            probe_cue_img = '../cues/cue_right.png'

        cats = ['Face', 'Animal', 'Object', 'House']
        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'),
                                                                   cats4 = cats[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))

        # Eyetrack
        win.callOnFlip(tk.sendMessage,'q_cat_onset')
      End Routine:
        # Map buttons to shuffled cats, assumed read L-R
        buttons = ['6','7','8','9']
        categories = [c[0] for c in cats]

        button_map = dict(zip(categories,buttons))
        cat_map  = dict(zip(buttons,categories))

        if probe_loc == 'L':
            corAns = button_map[target_left[10]] # Index first letter after " images/" in target

        elif probe_loc == 'R':
            corAns = button_map[target_right[10]] # Index first letter after " images/" in target

        correct_category = cat_map[corAns]
        trials.addData('objective_category', cat_map[corAns])

        if cat_resp.keys:
            category_response = cat_map[cat_resp.keys[-1]]
            trials.addData('category_response', category_response)

        else: #If no response
            category_response = None
            trials.addData('category_response', category_response)

        #Calculate categorization accuracy
        if correct_category == category_response:
            trials.addData('category_correct', 1)
            category_correct_count += 1
        else:
            trials.addData('category_correct', 0)
    TextComponent q_category
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp
      allowedKeys = '6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_cat
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_8
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_8
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine q_rec
    CodeComponent q2_str_dat
      Code Type = Auto->JS
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n\n\n\n '
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file
        if probe_loc == 'L':
            probe_cue_img = '../cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img = '../cues/cue_right.png'

        #Eyetracker msg
        win.callOnFlip(tk.sendMessage,'q_rec_onset')
    TextComponent q_recognition
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $rec_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent rec_resp
      allowedKeys = '7','8'
      correctAns = 7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_rec
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_9
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_9
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine q_conf
    CodeComponent q3_shuffle
      Code Type = Py
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      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file

        if probe_loc == 'L':
            probe_cue_img = '../cues/cue_left.png'
        elif probe_loc == 'R':
            probe_cue_img = '../cues/cue_right.png'

        # Randomize Order of FAOH
        #Initialize cat components


        conf_lvls = ['1', '2', '3', '4']
        conf_question = (
                        u'Confidence:\n\n\n\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = conf_lvls[0].encode().decode('utf-8'),
                                                                   cats2 = conf_lvls[1].encode().decode('utf-8'),
                                                                   cats3 = conf_lvls[2].encode().decode('utf-8'),
                                                                   cats4 = conf_lvls[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
        #Eyetrack
        win.callOnFlip(tk.sendMessage,'q_conf_onset')
    TextComponent q_confidence
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $conf_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent conf_resp
      allowedKeys = '6','7','8','9'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_cat_2
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_10
      fillColor = None
      lineColor [set every repeat] = $prob_left
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_10
      fillColor = None
      lineColor [set every repeat] = $prob_right
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = $instructions_type
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator instructions_loop
  Routine eyetrack_calib
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $block_conditions
    isTrials = False
    loopType = random
    nReps = 1
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    Routine break_2
    Routine eyetrack_recalib
    Routine Block_Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $bloc_type
      conditionsFile = $trial_conditions
      loopType = random
      nReps = $trial_repeats
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      Routine init_fix
      Routine att_cue
      Routine blank_pre
      Routine stim
      Routine blank_post
      Routine q_cat
      Routine q_rec
      Routine q_conf
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine Thanks_msg
