PsychoPy2experiment version="2020.2.10"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['subject'],expInfo['session'], expName, expInfo['date'])
  Experiment info = {'subject': '', 'session': '001', 'HPColor': 'black', 'Control': 'False', 'feedback': 'False'}
  Full-screen window = True
  Monitor = EEG
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = SEA_PracticeM
  logging level = debug
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Routines
  Routine welcome
    TextComponent welcome_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome

        Thank you for participating in this experiment

        Press any button to continue
    KeyboardComponent welcome_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent load_questimate
      Code Type = Auto->JS
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      Before Experiment:
        try:
            import cPickle as pickle
        except ImportError:  # Python 3.x
            import pickle

        quest_file = gui.fileOpenDlg('.')
        if not quest_file:
            core.quit()

        with open(quest_file[0], 'rb') as handle:
            quest_estimates = pickle.load(handle)
  Routine eyetrack_calib
    CodeComponent eye_track_init
      Code Type = Py
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      Before Experiment:
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        #%% Eyelink Init Code Comparison
        # SETP 2: open a connection to the tracker
        # replace the IP address with None will open a simulated connection


        if expInfo['EyeTrack']:
            tk = pylink.EyeLink('100.1.1.1')
        else:
            pylink.EyeLink.dummy_open
            tk = pylink.EyeLink(None)

        scnWidth, scnHeight = (1920, 1080)

        # STEP 3: Open an EDF data file on the Host and write a file header
        # The file name should not exceeds 8 characters
        dataFileName = expInfo['subject'] + '_' + expInfo['session']+ '.EDF'
        tk.openDataFile(dataFileName)
        # add personalized data file header (preamble text)
        tk.sendCommand("add_file_preamble_text 'EA Spatial Exp'")
      Begin Routine:
        # set up a custom graphics envrionment (EyeLinkCoreGraphicsPsychopy) for calibration
        genv = EyeLinkCoreGraphicsPsychoPy(tk, win)

        # set background and foreground colors, (-1,-1,-1)=black, (1,1,1)=white
        #genv.backgroundColor = (0,0,0)
        #genv.foregroundColor = (-1,-1,-1)

        # play feedback beeps during calibration/validation, disabled by default
        #genv.enableBeep = True

        # calibration target size
        #genv.targetSize = 32

        # Configure the calibration target, could be a 'circle',
        # a movie clip ('movie'), a 'picture', or a 'spiral', the default is a circle
        genv.calTarget = 'circle'

        # provide a movie clip if genv.calTarget = 'movie'
        #genv.movieTargetFile = 'videos' + os.sep + 'animated_target.avi'

        # provide a picture if genv.calTarget = 'picture'
        #genv.pictureTargetFile = 'images' + os.sep + 'panda.jpg'

        pylink.openGraphicsEx(genv)

        # STEP 5: Set up the tracker
        # put the tracker in idle mode before we change its parameters
        tk.setOfflineMode()
        pylink.pumpDelay(100)

        # IMPORTANT: send screen resolution to the tracker
        # see Eyelink Installation Guide, Section 8.4: Customizing Your PHYSICAL.INI Settings
        tk.sendCommand("screen_pixel_coords = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

        # save screen resolution in EDF data, so Data Viewer can correctly load experimental graphics
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
        tk.sendMessage("DISPLAY_COORDS = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

        # sampling rate, 250, 500, 1000, or 2000; this command is not supported for EyeLInk II/I trackers
        # tk.sendCommand("sample_rate 1000")

        # detect eye events based on "GAZE" (or "HREF") data
        tk.sendCommand("recording_parse_type = GAZE")

        # Saccade detection thresholds: 0-> standard/coginitve, 1-> sensitive/psychophysiological
        # see Eyelink User Manual, Section 4.3: EyeLink Parser Configuration
        tk.sendCommand("select_parser_configuration 0")

        # choose a calibration type, H3, HV3, HV5, HV13 (HV = horiztonal/vertical),
        # tk.setCalibrationType('HV9') also works, see the Pylink manual
        tk.sendCommand("calibration_type = HV9")

        # proportion of the screen covered by calibration/validation targets
        # OPTIONAL -- useful for cases where the monitor extends beyond the trackable range or
        # part of the monitor is occuluded, e.g., in some MRI labs
        #tk.sendCommand("calibration_area_proportion 0.85 0.83")
        #tk.sendCommand("validation_area_proportion  0.85 0.83")

        # Set a gamepad button to accept calibration/drift check target
        # OPTIONAL -- You need a supported gamepad/button box that is connected to the Host PC
        # tk.sendCommand("button_function 5 'accept_target_fixation'")

        # tracker hardware, 1-EyeLink I, 2-EyeLink II, 3-Newer models (1000/1000Plus/Portable DUO)
        hardware_ver = tk.getTrackerVersion()

        # tracking software version
        software_ver = 0
        if hardware_ver == 3:
            tvstr = tk.getTrackerVersionString()
            vindex = tvstr.find("EYELINK CL")
            software_ver = float(tvstr.split()[-1])

        # sample and event data saved in EDF data file
        # see sectin 4.6 of the EyeLink user manual, software version > 4 adds remote tracking (and thus HTARGET)
        tk.sendCommand("file_event_filter = LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT")
        if software_ver >= 4:
            tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
        else:
            tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

        # sample and event data available over the link
        tk.sendCommand("link_event_filter = LEFT,RIGHT,FIXATION,FIXUPDATE,SACCADE,BLINK,BUTTON,INPUT")
        if software_ver >= 4:
            tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
        else:
            tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

        # STEP 6:  Show task instructions and calibrate the tracker
        msg = visual.TextStim(win, text='Calibration will begin shortly\n' +
                                        'In the task, quickly move your eyes to look at a dot (target) when it appears',
                                        font='Courier New',
                                        units='norm', pos=(0, 0), height=0.07, wrapWidth=None, ori=0,
                                        color='white', colorSpace='rgb', opacity=1,
                                        languageStyle='LTR',
                                        depth=0.0)
        msg.draw()
        win.flip()
        event.waitKeys()

        # set up the camera and calibrate the tracker
        tk.doTrackerSetup()
  Routine instructions
    TextComponent instr_txt
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this experiment you will be asked to make judgements about simple images

        You will see images of faces, animals, objects, and houses

        You will be asked to indicate the image category and to describe your visual experience of one of the images presented based on a cue that will appear with the questions.

        Press any button to continue
    KeyboardComponent instr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent load_questimate_2
      Code Type = Auto->JS
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      Before Experiment:
        try:
            import cPickle as pickle
        except ImportError:  # Python 3.x
            import pickle

        quest_file = gui.fileOpenDlg('.')
        if not quest_file:
            #    core.quit()
            print('Using Arbitrary Contrasts for Tests')
            #Gets initiated with target stim loading
            quest_estimates = []
        else:
            with open(quest_file[0], 'rb') as handle:
                quest_estimates = pickle.load(handle)
  Routine instr_cues
    TextComponent instr_txt_cue
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        At the beginning of a block and trial you will first see cues that indicate how likely an image with real content will appear on the left or right side of the screen.

        Before the images are presented you will see a cue that indicates how likely you will be asked a question about the left or right image at the end of the trial.

        Importantly, the content of the left and right image are unrelated. e.g. The left image can be of a house and the right image can be of a animal. Said another way, the left image does not provide information about the right image and vice versa.

        Now you will see what these cues look like and how to interpret them

        press any button to continue
    KeyboardComponent instr_resp_cue
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eyetrack_recalib
    CodeComponent eye_recalib
      Code Type = Auto->JS
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      Begin Routine:
        #Taking a break every N trials
        #Recalibrate eyetracker after break
        if trial_count == 0 or trial_count %break_freq != 0:
            continueRoutine = False
        else:
            # set up a custom graphics envrionment (EyeLinkCoreGraphicsPsychopy) for calibration
            genv = EyeLinkCoreGraphicsPsychoPy(tk, win)

            # Configure the calibration target, could be a 'circle',
            # a movie clip ('movie'), a 'picture', or a 'spiral', the default is a circle
            genv.calTarget = 'circle'


            pylink.openGraphicsEx(genv)

        #    # STEP 5: Set up the tracker
        #    # put the tracker in idle mode before we change its parameters
        #    tk.setOfflineMode()
        #    pylink.pumpDelay(100)

            # IMPORTANT: send screen resolution to the tracker
            # see Eyelink Installation Guide, Section 8.4: Customizing Your PHYSICAL.INI Settings
            tk.sendCommand("screen_pixel_coords = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

            # save screen resolution in EDF data, so Data Viewer can correctly load experimental graphics
            # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
            tk.sendMessage("DISPLAY_COORDS = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

            # sampling rate, 250, 500, 1000, or 2000; this command is not supported for EyeLInk II/I trackers
            # tk.sendCommand("sample_rate 1000")

            # detect eye events based on "GAZE" (or "HREF") data
            tk.sendCommand("recording_parse_type = GAZE")

            # Saccade detection thresholds: 0-> standard/coginitve, 1-> sensitive/psychophysiological
            # see Eyelink User Manual, Section 4.3: EyeLink Parser Configuration
            tk.sendCommand("select_parser_configuration 0")

            # choose a calibration type, H3, HV3, HV5, HV13 (HV = horiztonal/vertical),
            # tk.setCalibrationType('HV9') also works, see the Pylink manual
            tk.sendCommand("calibration_type = HV9")

            # tracker hardware, 1-EyeLink I, 2-EyeLink II, 3-Newer models (1000/1000Plus/Portable DUO)
            hardware_ver = tk.getTrackerVersion()

            # tracking software version
            software_ver = 0
            if hardware_ver == 3:
                tvstr = tk.getTrackerVersionString()
                vindex = tvstr.find("EYELINK CL")
                software_ver = float(tvstr.split()[-1])

            # sample and event data saved in EDF data file
            # see sectin 4.6 of the EyeLink user manual, software version > 4 adds remote tracking (and thus HTARGET)
            tk.sendCommand("file_event_filter = LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT")
            if software_ver >= 4:
                tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
            else:
                tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

            # sample and event data available over the link
            tk.sendCommand("link_event_filter = LEFT,RIGHT,FIXATION,FIXUPDATE,SACCADE,BLINK,BUTTON,INPUT")
            if software_ver >= 4:
                tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
            else:
                tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

            # STEP 6:  Show task instructions and calibrate the tracker
            msg = visual.TextStim(win, text='Calibration will begin shortly\n' +
                                            'In the task, quickly move your eyes to look at a dot (target) when it appears',
                                            font='Courier New',
                                            units='norm', pos=(0, 0), height=0.07, wrapWidth=None, ori=0,
                                            color='white', colorSpace='rgb', opacity=1,
                                            languageStyle='LTR',
                                            depth=0.0)
            msg.draw()
            win.flip()
            event.waitKeys()


            # set up the camera and calibrate the tracker
            tk.doTrackerSetup()
  Routine Thanks_msg
    TextComponent thanks_txt
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Thank you! If you feel comfortable with the paradigm and have no other questions we will move forward to the main experiment
      units = norm
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    KeyboardComponent EndExp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_exp
    TextComponent beginexp
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        If you do not have any questions or concerns:





        press any button to begin the experiment
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine overview
    TextComponent instr_txt_2
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this task, similar to the previous, you will be asked to make judgements about simple images. The key differences between this task and the last is that

        1) Two images will be shown every trial

        2) You will be given two types of cues that provide information on:
             a) how likely an image will be real vs noise

             b) how likely that you will have to answer questions about one of the images presented


        Press any button to continue
    KeyboardComponent instr_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent load_questimate_3
      Code Type = Auto->JS
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      Before Experiment:
        try:
            import cPickle as pickle
        except ImportError:  # Python 3.x
            import pickle
        import EASTO_funcs as ea
        import pandas as pd

        quest_file = gui.fileOpenDlg('.')
        if not quest_file:
            #    core.quit()
            print('Using Arbitrary Contrasts for Tests')
            #Gets initiated with target stim loading
            quest_estimates = []
        else:
            with open(quest_file[0], 'rb') as handle:
                quest_estimates = pickle.load(handle)
  Routine fixation
    TextComponent fix_instr
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In the middle of the screen you can see a fixation cross,









        Remember to always keep your eyes on this cross when you see it

        Press any button to continue
    PolygonComponent Fix_Example
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = .7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent endInstructions_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_att_cue
    CodeComponent att_cue_placement_2
      Code Type = Auto->JS
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      Begin Routine:
        if att_locX == 'L':
            att_left_opac = 1
            att_right_opac = 0
            att_text = 'More likely to be asked about left image '

        elif att_locX == 'R':
            att_left_opac = 0
            att_right_opac = 1
            att_text = 'More likely to be asked about right image '

        elif att_locX == 'N':
            att_left_opac = 1
            att_right_opac = 1
            att_text = 'Equally likely to be asked about left OR right image'

        att_cue_instr = (''' At the beginning of each trial you will see a cue that
        indicates how likely you will answer the questions about the image on the right
        or left at the end of the trial. \n\n\n\n
        {cue_instr} \n\n\n\n

        press any button to continue
        '''.format(cue_instr = att_text))
    TextComponent cue_instr
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text [set every repeat]:
        $att_cue_instr
    PolygonComponent att_cue_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent endInstructions_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent att_left_exemp
      color = $[-1,-1,-1]
      image = ../cues/cue_left.png
      opacity [set every repeat] = att_left_opac
      pos = (-0.4, 0)
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent att_right_exemp
      color = $[-1,-1,-1]
      image [set every repeat] = ../cues/cue_right.png
      opacity [set every repeat] = att_right_opac
      pos = (0.4, 0)
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine Q_cat
    TextComponent text_5
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The images will be presented very briefly.
        The questions will always be presented with a cue (left or right pointing arrow) that indicates which image you should answer the question about

        If you do not see anything - this is normal, just try your best to guess the correct image category.

        If you need to make a guess, please make a genuine guess. That is, do not use a systematic strategy for your guesses,
        like always pressing "1" or always pressing the opposite of what you pressed last.

        No matter your visual experience, please answer every question.

        Press any button to continue
    KeyboardComponent endInstructions_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q_cat_exemp
    CodeComponent q1_shuffle_2
      Code Type = Py
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      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file


        probe_cue_img = '../cues/cue_left.png'


        # Randomize Order of FAOH
        #Initialize cat components

        cats = ['Face', 'Animal', 'Object', 'House']
        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'),
                                                                   cats4 = cats[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
    TextComponent q_category_2
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp_2
      allowedKeys = '6','7','8','9'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent probe_cue_cat_3
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine Q_Rec
    TextComponent text_6
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will also be asked if you had a meaningful visual experience.

        For example: if you saw an animal, or only part of an animal, as long as you have a sense of the image's identity - please answer "yes".

        There will be cases where you will see only a noisy glimpse of light or simply nothing.

        If this is the case, the experience is not meaningful - please answer "no".

        Press any button to continue
    KeyboardComponent endInstructions_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q_rec_exemp
    CodeComponent probe_noshuffle_2
      Code Type = Py
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n '
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file

        probe_cue_img = '../cues/cue_left.png'
    TextComponent q_recognition_2
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $rec_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent rec_resp_2
      allowedKeys = '7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent probe_cue_rec_2
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine Summary
    TextComponent text_8
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Summary of task:

        0. Block Cue
        ...
        1. Fixation
        2. Trial Cue
        3. Image Presentations
        4. Category Question: Guess if unsure
        5. Meaningful Visual Experience: Yes or No
        6. Confidence on Visual Experience: 1-4
        7. Repeat 1-6 until new block cue is presented
        8. Always respond

        Press any button to continue
    KeyboardComponent endInstructions_10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_practice
    TextComponent begin
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Time to practice some trials




        Press any button to begin
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
    CodeComponent trial_breaks
      Code Type = Auto->JS
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      Before Experiment:
        import math
      Begin Experiment:
        blocks_count = 0
        trial_counter = 0
        category_correct_count = 0
      Begin Routine:
        #Taking a break every Block
        blocks_total = blocks.nTotal #Total # of blocks to be run
        blocks_count = blocks.thisN
        block_complete = ''
        categorization_accuracy = ''

        if blocks_count == 0:
            continueRoutine = False
        else:
        #    blocks_count +=1
            block_complete = '\n\n\n\n\n\nBlocks Completed: {num_done}/{num_total}'.format(num_done = blocks_count, num_total = blocks_total)
            categorization_accuracy = '\n\n You correctly categorized {percent_correct:.0%} of the images!'.format(percent_correct =  category_correct_count/trial_counter)
            #Reset category count every block and trial count
            category_correct_count = 0
            trial_counter = 0
    KeyboardComponent end_break
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent break_text
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = norm
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      text:
        Great job! Take a  break to rest your eyes if you need to.








        Press any button to resume when you are ready
    TextComponent block_count
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $block_complete
      units = norm
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    TextComponent cat_accuracy
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $categorization_accuracy 
      units = norm
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    TextComponent countdown_timer
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 110
      stopVal [duration (s)] = 10
      units = norm
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      text [set every frame]:
        $round(120 - t, ndigits = 1)
  Routine stim
    CodeComponent stim_presentation
      Code Type = Py
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      Before Experiment:
        #Make Filter store in params dict
        # Make param dict
        params = {'imsize' : [300,300],
              'imbgrd' : 127,
              'categories' : ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH','ON']}

        params['filter'] = ea.make_filter(params)
      Each Frame:
        #Set graded conntrast of images for entire presentation

        if frameN <stim_duration:
            F1 = grad_contr_left[frameN] * params['filter']
            F2 = grad_contr_right[frameN] * params['filter']
            left_stim = np.array(img_left * F1)
            right_stim = np.array(img_right * F2)
    PolygonComponent place_right_2
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent place_left_2
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_R_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_R_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_L_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_L_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    ImageComponent stim_left_2
      flipVert = True
      image [set every frame] = $left_stim
      pos = (-4, 0)
      size = (4, 4)
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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    ImageComponent stim_right_2
      flipVert = True
      image [set every frame] = $right_stim
      pos = (4, 0)
      size = (4, 4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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    PolygonComponent stim_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = stim_duration
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  Routine q_conf
    CodeComponent q3_shuffle
      Code Type = Py
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      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file

        if probe_loc == 'L':
            probe_cue_img = '../cues/cue_left.png'
        elif probe_loc == 'R':
            probe_cue_img = '../cues/cue_right.png'

        # Randomize Order of FAOH
        #Initialize cat components


        conf_lvls = ['1', '2', '3', '4']
        conf_question = (
                        u'Confidence: \n\n\n\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = conf_lvls[0].encode().decode('utf-8'),
                                                                   cats2 = conf_lvls[1].encode().decode('utf-8'),
                                                                   cats3 = conf_lvls[2].encode().decode('utf-8'),
                                                                   cats4 = conf_lvls[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
    TextComponent q_confidence
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $conf_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent conf_resp
      allowedKeys = '6','7','8','9'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_cat_2
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_10
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_10
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_10
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine pract_type
    CodeComponent pract_code
      Code Type = Py
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      Begin Experiment:
        if expInfo['Control']:
            practice_sequence = 'pract_type_control.xlsx'
            if expInfo['HPColor'] == 'black':
                block_conditions = 'practice_blocks_black-HP_control.xlsx'
            elif expInfo['HPColor'] == 'white':
                block_conditions = 'practice_blocks_white-HP_control.xlsx'
        else:
            practice_sequence = 'pract_type.xlsx'
            if expInfo['HPColor'] == 'black':
                block_conditions = 'practice_blocks_black-HP.xlsx'
            elif expInfo['HPColor'] == 'white':
                block_conditions = 'practice_blocks_white-HP.xlsx'
      Begin Routine:
        """
        Define which rows of the blocks condition file
        should be selected given what the subject is practicing
        """

        practice_conditions = pd.read_excel(block_conditions)
        # Create dict to store indices of conditions file by block
        practice_levels = {cond : '' for cond in practice_conditions.practice_level.unique() }
        for cond in practice_conditions.practice_level.unique():
            start_ind = practice_conditions.index[practice_conditions['practice_level'] == cond][0]
            end_ind = practice_conditions.index[practice_conditions['practice_level'] == cond][-1] + 1 #Adding +1 to include last index
            practice_levels[cond] = '{start}:{end}'.format(start = start_ind, end = end_ind)
        # Select the blocks to run
        if pract_type == 'E':
            pract_conds = practice_levels['E']
            practice_type_msg = ('The following trials you will practice using the block cue''\n\n\n\n\n' 'Press any button to continue')
        elif pract_type == 'A':
            pract_conds = practice_levels['A']
            practice_type_msg = ('The following trials you will practice using the trial cue''\n\n\n\n\n' 'Press any button to continue')
        elif pract_type == 'B':
            pract_conds = practice_levels['B']
            practice_type_msg = ('The following trials you will practice using both cues together''\n\n\n\n\n' 'Press any button to continue')

        #Show categorization accuracy after each block
        categorization_accuracy = ''
        if practice_type.thisN != 0:
            categorization_accuracy = '\n\n You correctly categorized {percent_correct:.0%} of the images!'.format(percent_correct =  category_correct_count/trial_counter)
            #Reset category count every block and trial count
            category_correct_count = 0
            trial_counter = 0
    TextComponent practice_type_txt
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_type_msg
      units = norm
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    TextComponent cat_accuracy_2
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $categorization_accuracy 
      units = norm
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_exp_cue
    CodeComponent exp_cue_instructions
      Code Type = Py
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      Begin Routine:
        if expInfo['HPColor'] == 'black':
            HP_color = 'BLACK'
            LP_color = 'WHITE'
        elif expInfo['HPColor'] == 'white':
            LP_color = 'BLACK'
            HP_color = 'WHITE'

        exp_instr_txt = ('''At the beginning of a block you will first see cues that indicate how likely an image with real content will appear within the placeholder.
        \n\n\n\n\n\n\n
        The {H_color} lined placeholder indicates that a real image is MORE LIKELY to appear within the placeholder. The {L_color} lined placeholders indicates that a real image is LESS LIKELY to appear within the placeholder.
        If the placeholder is gray, both real and noise images are equaly likely to appear.
        \n
        press any button to continue'''.format(H_color = HP_color , L_color = LP_color))
    PolygonComponent place_right
      fillColor = None
      lineColor [set every repeat] = $prob_rightX
      lineWidth = 3
      opacity = 0.7
      pos = (4, 4)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
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    PolygonComponent place_left
      fillColor = None
      lineColor [set every repeat] = $prob_leftX
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 4)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
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    PolygonComponent long_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 4)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
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    PolygonComponent hi_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 4)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
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    PolygonComponent hi_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 4)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
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    PolygonComponent long_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 4)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
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    TextComponent place_explan
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $exp_instr_txt
      units = norm
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    PolygonComponent place_left_fill_2
      fillColor [set every repeat] = $left_fillX
      lineColor = None
      pos = (-4,4)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    PolygonComponent place_right_fill_2
      fillColor [set every repeat] = $right_fillX
      lineColor = None
      pos = (4,4)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
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    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block_Cue
    CodeComponent stim_block_choice
      Code Type = Py
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      Before Experiment:
        from copy import deepcopy
      Begin Experiment:
        #Set up image lists
        n_imgs = 16
        n_trial_types = 18
        n_block_types = 3
        stim_cats = ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH', 'ON']

        if not quest_estimates:
            quest_estimates = {'../images/%s%s' %(stim_cats[i], x) : 1 for i in range(len(stim_cats)) for x in range(1,3)}

        #Get path for real and scrambled images
        real_imgs = ['../images/%s%s.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]

        scram_imgs = ['../images/%s%sscram.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]


        #Generate Stimulus Lists for the whole experiment to ensure that each exemplar is presented in each condition equally
        trial_conditions = 'practice_cond.xlsx'
        expect_left_trials, expect_right_trials, expect_neutral_trials, expect_high_trials, expect_low_trials = ea.generate_stim(real_imgs, scram_imgs, trial_conditions, [2/3, 1/3], 'Spatial')
      Begin Routine:
        #Rows that refer to condition file set in loop
        conditions = pd.read_excel('practice_cond.xlsx')
        # Create dict to store indices of conditions file by block
        trials = {cond : '' for cond in conditions.exp_loc.unique() }
        for cond in conditions.exp_loc.unique():
            start_ind = conditions.index[conditions['exp_loc'] == cond][0]
            end_ind = conditions.index[conditions['exp_loc'] == cond][-1] + 1 #Adding +1 to include last index
            trials[cond] = '{start}:{end}'.format(start = start_ind, end = end_ind)
        #Refer to the previously copied dicts that contain all possible trials
        #(this enables having arbitrary block size while maintaing each exemplar is presented with the same frequency
        if exp_block == 'left':
            bloc_type = trials['L']
            targets_left = expect_left_trials['left_stims'] # Higher prob real left
            targets_right = expect_left_trials['right_stims']

        elif exp_block == 'right':
            bloc_type = trials['R']
            targets_left = expect_right_trials['left_stims'] # Higher prob real left
            targets_right = expect_right_trials['right_stims']

        elif exp_block == 'neutral':
            bloc_type = trials['N']
            targets_left = expect_neutral_trials['left_stims'] # Higher prob real left
            targets_right = expect_neutral_trials['right_stims']

        elif exp_block == 'high':
            bloc_type = trials['Hi']
            targets_left = expect_high_trials['left_stims']
            targets_right = expect_high_trials['right_stims']

        elif exp_block == 'low':
            bloc_type = trials['Lo']

            targets_left = expect_low_trials['left_stims']
            targets_right = expect_low_trials['right_stims']


        #randomize order of stimuli & freq of Real/Scram
        for exp_types in targets_left.keys(): #dict keys should be identical regardless of left vs right or 1st vs 2nd
            #Shuffle images
            shuffle(targets_left[exp_types])
            shuffle(targets_right[exp_types])

        # Define ITI Distribution per block
        #Define possible ITI Vals & number of trials in a block

        numTrials = n_imgs * n_trial_types * n_block_types # num exemplars * num trials * blocks (Total trials in a block) (Extra to prevent empty lists)
        if expInfo['feedback']:
            ITI_vals = np.array([.5, 1])
        else:
            ITI_vals = np.array([1, 1.5])
        #Sample from exponential distribution
        lam = 1 # This is set s.t. 1/lambda = value of first interval. i.e exp dist mean is T1
        xdist = lam * np.exp(-lam * ITI_vals)

        #Normalize and generate counts
        xdist_norm = numTrials * (xdist/ sum(xdist));
        ITI_counts = np.round(xdist_norm).astype(int)

        #Set ITI for each trial for one block
        #And randomly shuffle
        ITI_list = np.random.permutation(np.repeat(ITI_vals, ITI_counts))

        ITI_list = list(ITI_list)
    PolygonComponent place_left_4
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4,0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_4
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4,0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4,0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4,0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4,0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4,0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine q_conf_exemp
    CodeComponent q3_shuffle_2
      Code Type = Py
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      Begin Routine:
        # Randomize Order of FAOH
        #Initialize cat components


        conf_lvls = ['1', '2', '3', '4']
        conf_question = (
                        u'Confidence:\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = conf_lvls[0].encode().decode('utf-8'),
                                                                   cats2 = conf_lvls[1].encode().decode('utf-8'),
                                                                   cats3 = conf_lvls[2].encode().decode('utf-8'),
                                                                   cats4 = conf_lvls[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
    TextComponent q_confidence_2
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $conf_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent conf_resp_2
      allowedKeys = '6','7','8','9'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent probe_cue_cat_4
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine Q_Conf
    TextComponent conf_question_explain
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Lastly you will be asked to report how confident you were in deciding that the image was real or noise.

        You will be presented with 4 options (1, 2, 3, 4) which indicate low confidence (1) to high confidence (4)

        For example: if you responded "Yes" or "No" to the previous question and are certain in your response, select "4". If uncertain  select "1". If somewhere in between select "2" or "3"




        Press any button to continue
    KeyboardComponent endInstructions_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine att_cue
    CodeComponent att_cue_placement_3
      Code Type = Auto->JS
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      Begin Routine:
        if pract_type == 'E':
            att_left_opac = 0
            att_right_opac = 0
        else:
            if att_loc == 'L':
                att_left_opac = 1
                att_right_opac = 0

            elif att_loc == 'R':
                att_left_opac = 0
                att_right_opac = 1

            elif att_loc == 'N':
                att_left_opac = 0
                att_right_opac = 0
    PolygonComponent place_right_5
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent place_left_5
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent long_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent hi_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent hi_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    PolygonComponent long_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    ImageComponent att_left_2
      color = $[-1,-1,-1]
      image = ../cues/cue_left.png
      opacity [set every repeat] = att_left_opac
      pos = (-0.4, 0)
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      texture resolution = 512
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    ImageComponent att_right_2
      color = $[-1,-1,-1]
      image [set every repeat] = ../cues/cue_right.png
      opacity [set every repeat] = att_right_opac
      pos = (0.4, 0)
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      texture resolution = 512
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    PolygonComponent att_cue_fix_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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  Routine blank_pre
    PolygonComponent place_right_3
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent place_left_3
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent long_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent hi_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent hi_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent long_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    PolygonComponent post_cue_fix2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    CodeComponent load_stim_2
      Code Type = Py
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      Begin Routine:
        #Select which stimuli to present
        #Pick for left image
        target_left = targets_left[trial_type].pop()

        #Pick right image
        target_right = targets_right[trial_type].pop()

        thisExp.addData('stim_left', target_left)
        thisExp.addData('stim_right', target_right)

        #Load .npy of images
        img_left = np.load(target_left)
        img_right = np.load(target_right)

        #Ramp up and down stim contrast with peak
        #contrast at 66.7 mS (4 frames assuming 60Hz)
        stim_left_contrast = quest_estimates[target_left[:13]]
        stim_right_contrast = quest_estimates[target_right[:13]]

        if not expInfo['frameRate']: #Can't measure FR, e.g. dropping frames
            nC = 4
        elif np.isclose(expInfo['frameRate'], 120, rtol = .1):
            nC = 8 #Num frames of presentation
        elif np.isclose(expInfo['frameRate'], 60, rtol = .1):
            nC =4
        else:
            nC = 8

        minC = 0.001
        maxC = stim_left_contrast
        grad_contr_left = np.linspace(minC,maxC,nC)

        minC = 0.001
        maxC = stim_right_contrast
        grad_contr_right = np.linspace(minC,maxC,nC)

        #New stim duration in frames
        stim_duration = len(grad_contr_left) #left and right should have same duration
  Routine init_fix
    CodeComponent ITI_Select
      Code Type = Auto->JS
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      Begin Routine:
        trial_counter += 1 # Manual trial counter
        #Get ITI for trial
        #Initiation of ITI_list is in "Block_Cue" Routine
        ITI_duration = ITI_list.pop()

        thisExp.addData('ITI', ITI_duration)
    PolygonComponent place_left_6
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent place_right_6
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_R_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_R_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_L_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_L_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent pre_cue_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine feedback
    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        from psychopy.tools.monitorunittools import deg2pix
        from psychopy import monitors
      Begin Experiment:
        mon = monitors.Monitor('EEG')

        incor_lw = deg2pix(0.4, mon)
      Begin Routine:
        if expInfo['feedback']:
            if corDetect:
                fbck_cor.opacity = 0.7
                fbck_incor.opacity = 0
            else:
                fbck_cor.opacity = 0
                fbck_incor.opacity = 0.7
        else:
            continueRoutine = False
    PolygonComponent fbck_cor
      fillColor = $[-.75,.75,-.75]
      lineColor = $[-.75,.75,-.75]
      opacity = .7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    PolygonComponent fbck_incor
      fillColor = $[.75,-.75,-.75]
      lineColor = $[.75,-.75,-.75]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blank_post
    PolygonComponent post_stim_fix
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_left_7
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_right_7
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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  Routine q_cat
    CodeComponent q1_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        # Randomize Order of FAOH
        #Initialize cat components
        if probe_loc == 'L':
            probe_cue_img_2 = '../cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img_2 = '../cues/cue_right.png'

        cats = ['Face', 'Animal', 'Object', 'House']
        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'),
                                                                   cats4 = cats[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
      End Routine:
        # Map buttons to shuffled cats, assumed read L-R

        buttons = ['6','7','8','9']
        categories = [c[0] for c in cats]

        button_map = dict(zip(categories,buttons))
        cat_map  = dict(zip(buttons,categories))
        #
        if probe_loc == 'L':
            corAns = button_map[target_left[10]] # Index first letter after " images/" in target

        elif probe_loc == 'R':
            corAns = button_map[target_right[10]] # Index first letter after " images/" in target

        correct_category = cat_map[corAns]
        trials.addData('objective_category', cat_map[corAns])

        if cat_resp.keys:
            category_response = cat_map[cat_resp.keys[-1]]
            trials.addData('category_response', category_response)

        else: #If no response
            category_response = None
            trials.addData('category_response', category_response)


        #Calculate categorization accuracy
        if correct_category == category_response:
            trials.addData('category_correct', 1)
            category_correct_count += 1
        else:
            trials.addData('category_correct', 0)
    TextComponent q_category
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp
      allowedKeys = '6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_cat
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img_2
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_8
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_8
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_8
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine q_rec
    CodeComponent q2_str_dat
      Code Type = Auto->JS
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n\n\n\n '
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        if probe_loc == 'L':
            probe_cue_img_2 = '../cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img_2 = '../cues/cue_right.png'
    TextComponent q_recognition
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $rec_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent rec_resp
      allowedKeys = '7','8'
      correctAns = 7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_rec
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img_2
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_9
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_9
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_9
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine feedback_instr
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from psychopy.tools.monitorunittools import deg2pix
        from psychopy import monitors
      Begin Experiment:
        mon = monitors.Monitor('EEG')
        incor_lw = deg2pix(0.4, mon)

        feedback_text = ''
      Begin Routine:
        if expInfo['feedback']:
            if corDetect:
                fbck_cor_2.opacity = 0.7
                fbck_incor_2.opacity = 0
                feedback_text = "\n\n\n Correctly identified image as Real or Noise"
            else:
                fbck_cor_2.opacity = 0
                fbck_incor_2.opacity = 0.7
                feedback_text  = "\n\n\n Incorrectly identified image as Real or Noise"
        else:
            continueRoutine = False
    PolygonComponent fbck_cor_2
      fillColor = $[-.75,.75,-.75]
      lineColor = $[-.75,.75,-.75]
      opacity = .7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    PolygonComponent fbck_incor_2
      fillColor = $[.75,-.75,-.75]
      lineColor = $[.75,-.75,-.75]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_example
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_text
      units = norm
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    KeyboardComponent feedback_instruction
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine overview
  Routine fixation
  Routine instr_cues
  LoopInitiator exp_exemps loopType="TrialHandler"
    conditionsFile = exp_exemp.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('exp_block', '1st'), ('prob_left', [-0.75, -0.75, -0.75]), ('prob_right', [0.75, 0.75, 0.75])]),
      OrderedDict([('exp_block', '2nd'), ('prob_left', [0.75, 0.75, 0.75]), ('prob_right', [-0.75, -0.75, -0.75])]),
      OrderedDict([('exp_block', 'neutral'), ('prob_left', [-0.25, -0.25, -0.25]), ('prob_right', [-0.25, -0.25, -0.25])])]
    Routine instr_exp_cue
  LoopTerminator exp_exemps
  LoopInitiator att_exemps loopType="TrialHandler"
    conditionsFile = attcue_list.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('att_loc', 'L')]),
      OrderedDict([('att_loc', 'R')]),
      OrderedDict([('att_loc', 'N')])]
    Routine instr_att_cue
  LoopTerminator att_exemps
  Routine Q_cat
  Routine q_cat_exemp
  Routine Q_Rec
  Routine q_rec_exemp
  Routine Q_Conf
  Routine q_conf_exemp
  LoopInitiator fbck_instr_loop loopType="TrialHandler"
    conditionsFile = fbck_exemp.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('corDetect', 1)]),
      OrderedDict([('corDetect', 0)])]
    Routine feedback_instr
  LoopTerminator fbck_instr_loop
  Routine Summary
  Routine begin_practice
  LoopInitiator practice_type loopType="TrialHandler"
    conditionsFile = $practice_sequence
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine pract_type
    LoopInitiator blocks loopType="TrialHandler"
      Selected rows = $pract_conds
      conditionsFile = $block_conditions
      isTrials = False
      loopType = random
      nReps = 1
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      Routine break_2
      Routine Block_Cue
      LoopInitiator trials loopType="TrialHandler"
        Selected rows = $bloc_type
        conditionsFile = practice_cond.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('exp_loc', 'L'), ('att_loc', 'L'), ('probe_loc', 'L'), ('is_valid', 'Valid'), ('trial_type', 'EA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'L'), ('probe_loc', 'L'), ('is_valid', 'Valid'), ('trial_type', 'EA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'L'), ('probe_loc', 'L'), ('is_valid', 'Valid'), ('trial_type', 'EA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'L'), ('probe_loc', 'L'), ('is_valid', 'Valid'), ('trial_type', 'EA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'L'), ('probe_loc', 'L'), ('is_valid', 'Valid'), ('trial_type', 'EA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'L'), ('probe_loc', 'L'), ('is_valid', 'Valid'), ('trial_type', 'EA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'R'), ('probe_loc', 'R'), ('is_valid', 'Valid'), ('trial_type', 'NEA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'R'), ('probe_loc', 'R'), ('is_valid', 'Valid'), ('trial_type', 'NEA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'R'), ('probe_loc', 'R'), ('is_valid', 'Valid'), ('trial_type', 'NEA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'R'), ('probe_loc', 'R'), ('is_valid', 'Valid'), ('trial_type', 'NEA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'R'), ('probe_loc', 'R'), ('is_valid', 'Valid'), ('trial_type', 'NEA')]),
          OrderedDict([('exp_loc', 'L'), ('att_loc', 'R'), ('probe_loc', 'R'), ('is_valid', 'Valid'), ('trial_type', 'NEA')]),
          OrderedDict([('exp_loc', 'R'), ('att_loc', 'R'), ('probe_loc', 'R'), ('is_valid', 'Valid'), ('trial_type', 'EA')])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
        Routine init_fix
        Routine att_cue
        Routine blank_pre
        Routine stim
        Routine blank_post
        Routine q_cat
        Routine q_rec
        Routine q_conf
        Routine feedback
      LoopTerminator trials
    LoopTerminator blocks
  LoopTerminator practice_type
  Routine Thanks_msg
