PsychoPy2experiment version="2020.2.10"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'],expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'HPColor': 'black', 'verifyEstimate': 'False'}
  Full-screen window = True
  Monitor = EEG
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = SEA_PracticeQ
  logging level = debug
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stim_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .066
      texture resolution = 512
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  Routine instructions
    TextComponent instrText
      letterHeight = .1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this experiment you will be asked to make judgements about simple images

        You will see images of faces, animals, objects, and houses

        You will be asked to indicate the image category and to describe your visual experience of one of the images presented based on a cue that will appear with the questions.

        Press any button to continue
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RecResp
    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    PolygonComponent fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03125, 0.05)
      startVal [time (s)] = 0.5
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
        Did you see it?


        Y                 N
  Routine blank_post
    PolygonComponent post_stim_fix
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_left_5
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_right_5
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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  Routine instructions_2
    TextComponent instrText_2
      letterHeight = .1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Every trial a single image will appear on either the left or right side of the cross.

        The image may become harder or easier to see as you continue through the experiment.

        If you don't see anything then make a genuine guess on the category of the image


        Press any button to continue
    KeyboardComponent endInstructions_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_exp
    TextComponent beginexp
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        If you do not have any questions or concerns:





        press any button to begin the experiment
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    CodeComponent trial_breaks_2
      Code Type = Auto->JS
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      Begin Routine:
        categorization_accuracy = '\n\n\n You correctly categorized {percent_correct:.0%} images!'.format(percent_correct =  category_correct_count/trial_counter)
    TextComponent thanksMsg
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Thank you!

        You can relax now





        The next part of the experiment will begin shortly. It may take a few minutes.
    TextComponent cat_accuracy_2
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $categorization_accuracy
      units = norm
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    KeyboardComponent EndExp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gen_instr
    TextComponent instrText_4
      color = black
      font = Courier New
      letterHeight = .07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this part of the experiment you will be asked to make judgements about simple images

        You will see images of faces, animals, objects, and houses

        You will be asked to indicate the image category and to report your visual experience of the image presented

        Press any button to continue
    KeyboardComponent endInstructions_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_2
    TextComponent fix_instr
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In the middle of the screen you can see a fixation cross,









        Remember to always keep your eyes on this cross when you see it

        Press any button to continue
    PolygonComponent Fix_Example
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = .7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent endInstructions_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exemplars
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
      Begin Routine:
        img = np.load(stim_img)

        #Show exemplars are arbitrarily low contrast
        exemplar = np.array(img  * params['filter'] * 0.6)
    PolygonComponent stim_fix_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = .7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0
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    ImageComponent stim_pres
      flipVert = True
      image [set every repeat] = $exemplar
      size = (4, 4)
      startVal [time (s)] = 0
      texture resolution = 512
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    KeyboardComponent endInstructions_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent img_instr
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Here are examples of images you will see in both tasks. Please make sure you are able to define the category of each image











        Press any button to continue to the next image
    TextComponent img_cats
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text:
        Face | Animal | House | Object
  Routine Q_cat
    TextComponent text_5
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The images will be presented very briefly.
        The questions will always be presented with a cue (left or right pointing arrow) that indicates which image you should answer the question about

        If you do not see anything - this is normal, just try your best to guess the correct image category.

        If you need to make a guess, please make a genuine guess. That is, do not use a systematic strategy for your guesses,
        like always pressing "1" or always pressing the opposite of what you pressed last.

        No matter your visual experience, please answer every question.

        Press any button to continue
    KeyboardComponent endInstructions_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Q_Rec
    TextComponent text_6
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        You will also be asked if you had any meaningful visual experience.

        For example: if you saw an animal, or only part of an animal, as long as you have a sense of the image's identity - please answer "yes".

        There will be cases where you will see only a noisy glimpse of light or simply nothing. If this is the case, the experience is not meaningful - please answer "no".

        Press any button to continue
    KeyboardComponent endInstructions_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Summary
    TextComponent text_8
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Summary of task:

        1. Fixation
        2. Image Presentation (Left and Right)
        3. Category Question: Guess if unsure
        4. Visual Experience: Yes or No
        5. Always respond


        Press any button to continue
    KeyboardComponent endInstructions_10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_practice
    TextComponent begin
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Time to practice some trials




        Press any button to begin
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine overview
    TextComponent exp_overview
      color = black
      font = Courier New
      letterHeight = .07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        This experiment will include the following parts:

        (Day 1) Perception Task (~35 minutes)
        (Day 2) Guided Perception Task (~1.5 hours)

        You will be able to take mental breaks every 5-10 minutes

        Press any button to continue
    KeyboardComponent endInstructions_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q_cat_exemp
    CodeComponent q1_shuffle_2
      Code Type = Py
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      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file


        probe_cue_img = '../cues/cue_left.png'


        # Randomize Order of FAOH
        #Initialize cat components

        cats = ['Face', 'Animal', 'Object', 'House']
        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'),
                                                                   cats4 = cats[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
    TextComponent q_category_2
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp_2
      allowedKeys = '6','7','8','9'
      correctAns = $corAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent probe_cue_cat_3
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine q_rec_exemp
    CodeComponent probe_noshuffle
      Code Type = Py
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n '
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        ## Write Code to set cue to be valid or not valid
        #based on conditions file

        probe_cue_img = '../cues/cue_left.png'
    TextComponent q_recognition_3
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = $rec_question
      units = norm
      wrapWidth = 500
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    ImageComponent probe_cue_rec_2
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent rec_resp_exemp
      allowedKeys = '7','8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q_cat
    CodeComponent q1_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        # Randomize Order of FAOH
        #Initialize cat components
        if probe_loc == 'L':
            probe_cue_img_2 = '../cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img_2 = '../cues/cue_right.png'

        cats = ['Face', 'Animal', 'Object', 'House']
        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'),
                                                                   cats4 = cats[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
      End Routine:
        # Map buttons to shuffled cats, assumed read L-R

        buttons = ['6','7','8','9']
        categories = [c[0] for c in cats]

        button_map = dict(zip(categories,buttons))
        cat_map  = dict(zip(buttons,categories))
        #
        if probe_loc == 'L':
            corAns = button_map[target_left[10]] # Index first letter after " images/" in target

        elif probe_loc == 'R':
            corAns = button_map[target_right[10]] # Index first letter after " images/" in target

        correct_category = cat_map[corAns]
        thisExp.addData('objetive_category', correct_category)

        if cat_resp.keys:
            category_response = cat_map[cat_resp.keys[-1]]
            thisExp.addData('category_response', category_response)

        else: #If no response
            category_response = None
            thisExp.addData('category_response', category_response)


        #Calculate categorization accuracy
        if correct_category == category_response:
            thisExp.addData('category_correct', 1)
            category_correct_count += 1
        else:
            thisExp.addData('category_correct', 0)
    TextComponent q_category
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp
      allowedKeys = '6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_cat
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img_2
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_6
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_6
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine q_rec
    CodeComponent q2_str_dat
      Code Type = Auto->JS
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n\n\n\n'
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        if probe_loc == 'L':
            probe_cue_img_2 = '../cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img_2 = '../cues/cue_right.png'
      End Experiment:
        #Show number of proportion of recognized images
        proportion_rec = num_recognized / trials.nTotal
        print('Proportion Recognized: {:.0%}.'.format(proportion_rec))
      End Routine:
        #Calculate proportion recognized and save response
        if rec_resp.keys == '7':
            thisExp.addData('recognition', 'R')
            num_recognized += 1
        else: #For "No" or No Response
            thisExp.addData('recognition', 'U')
    TextComponent q_recognition
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $rec_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent rec_resp
      allowedKeys = '7','8'
      correctAns = 7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    ImageComponent probe_cue_rec
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img_2
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_7
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_7
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine instr_cues
    TextComponent instr_txt_cue
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Every trial you will see two images on the left and right side of the fixation cross.

        One image will have meaningful content and the other will not.

        The questions will be presented alongside an arrow cue that indicates which image you should answer the question about.

        For this part of the experiment this cue will ALWAYS correspond to the image that had meaningful content.


        press any button to continue
    KeyboardComponent instr_resp_cue
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_exp_cue
    CodeComponent Place_prob
      Code Type = Py
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      Begin Experiment:
        if expInfo['HPColor'] == 'black':
            HP_color = 'BLACK'
            LP_color = 'WHITE'
        elif expInfo['HPColor'] == 'white':
            LP_color = 'BLACK'
            HP_color = 'WHITE'

        exp_instr_txt = ('''To help you identify which image will have meaningful content and which will not, both stimuli will be contained in a placeholder.
        \n\n\n\n\n\n\n\n
        The {H_color} lined placeholder indicates that a meaningful image will appear within the placeholder, The {L_color} lined placeholder indicates that a noise image will appear within the placeholder.
        \n
        press any button to continue'''.format(H_color = HP_color , L_color = LP_color ))
    PolygonComponent place_right
      fillColor = None
      lineColor [set every repeat] = $prob_rightX
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
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    PolygonComponent place_left
      fillColor = None
      lineColor [set every repeat] = $prob_leftX
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
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    PolygonComponent long_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
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    PolygonComponent hi_back_R
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
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    PolygonComponent hi_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
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    PolygonComponent long_back_L
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
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    TextComponent place_explan
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $exp_instr_txt
      units = norm
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    KeyboardComponent endInstructions_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init_fix
    CodeComponent ITI_Select
      Code Type = Auto->JS
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      Before Experiment:
        import EASTO_funcs as ea
      Begin Experiment:
        #Define possible ITI Vals & number of trials in a block
        numTrials = 24*35 * 2 # num trials * num quest tracks
        if expInfo['verifyEstimate']:
            ITI_vals = np.array([1, 1.5])
        else:
            ITI_vals = np.array([.75, 1])
        #Sample from exponential distribution
        lam = 1.33 # This is set s.t. 1/lambda = value of first interval. i.e exp dist mean is T1
        xdist = lam * np.exp(-lam * ITI_vals)

        #Normalize and generate counts
        xdist_norm = numTrials * (xdist/ sum(xdist));
        ITI_counts = np.round(xdist_norm).astype(int)

        #Set ITI for each trial for one block
        #And randomly shuffle
        ITI_list = np.random.permutation(np.repeat(ITI_vals, ITI_counts))

        ITI_list = list(ITI_list)
      Begin Routine:
        #Manual Trial Counter
        trial_counter += 1
        #Get ITI for trial
        ITI_duration = ITI_list.pop()

        thisExp.addData('ITI', ITI_duration)

        # Loading .npy files
        #Select which stimuli to present
        # Randomly choose between stim presented left or right
        # Scrambled image is always the scrambled version of the real counterpart

        left_or_right = random()
        if expInfo['HPColor'] == 'black':
            HP_color = [-1.0,-1.0,-1.0]
            LP_color = [1.0,1.0,1.0]
        elif expInfo['HPColor'] == 'white':
            LP_color = [-1.0,-1.0,-1.0]
            HP_color =  [1.0,1.0,1.0]

        if left_or_right>0.5:
            #Display stim on left and scrambled on right
            target_left = stim_img
            target_right = stim_img[:13] + 'scram.npy'
            probe_loc = 'L'
            prob_cue_L = HP_color
            prob_cue_R = LP_color
            thisExp.addData('target_stimulus', target_left)

        else:
            #Display image on right not on left
            target_left = stim_img[:13] + 'scram.npy'
            target_right = stim_img
            probe_loc = 'R'
            prob_cue_L= LP_color
            prob_cue_R =  HP_color
            thisExp.addData('target_stimulus', target_right)

        thisExp.addData('stim_left', target_left)
        thisExp.addData('stim_right',target_right)

        # Load Stimulus images

        img_left = np.load(target_left)
        img_right = np.load(target_right)

        #Ramp up and down stim contrast with peak
        #contrast at 66.7 mS (4 frames assuming 60Hz)

        minC = 0.001
        if expInfo['verifyEstimate']:
            maxC = quest_estimates[stim_img[:13]]
        else:
            maxC = 10**level

        #Presenting Stimuli for 300 ms for practice instead of 66 ms unless verifying threshold

        if expInfo['verifyEstimate']:
            if not expInfo['frameRate']: #Can't measure FR, e.g. dropping frames
                nC = 4
            elif np.isclose(expInfo['frameRate'], 120, rtol = .1):
                nC = 8 #Num frames of presentation
            elif np.isclose(expInfo['frameRate'], 60, rtol = .1):
                nC = 4
            else:
                nC = 8
        else:
            if not expInfo['frameRate']: #Can't measure FR, e.g. dropping frames
                nC = 18
            elif np.isclose(expInfo['frameRate'], 120, rtol = .1):
                nC = 36 #Num frames of presentation
            elif np.isclose(expInfo['frameRate'], 60, rtol = .1):
                nC = 18
            else:
                nC = 36


        grad_contr = np.linspace(minC,maxC,nC)

        #New stim duration in frames
        stim_duration = len(grad_contr)
    PolygonComponent place_left_3
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent place_right_3
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent pre_cue_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine stim
    CodeComponent stim_select_2
      Code Type = Py
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      Before Experiment:
        #Make Filter store in params dict
        # Make param dict
        params = {'imsize' : [300,300],
              'imbgrd' : 127,
              'categories' : ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH','ON']}

        params['filter'] = ea.make_filter(params)
      Each Frame:
        #Set graded conntrast of images for entire presentation

        if frameN <stim_duration:
            F = grad_contr[frameN] * params['filter']  #Keep real and scrambled at same contrast regardless
            left_stim = np.array(img_left * F)
            right_stim = np.array(img_right * F)
      End Routine:
        ## End Routine
        #win.saveMovieFrames('stim_img'+str(trials.totalTrials)+'.png')
    PolygonComponent place_left_4
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent place_right_4
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent stim_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = stim_duration
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    ImageComponent stim_right_2
      flipVert = True
      image [set every frame] = $right_stim
      pos = (4, 0)
      size = (4, 4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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    ImageComponent stim_left_2
      flipVert = True
      image [set every frame] = $left_stim
      pos = (-4, 0)
      size = (4, 4)
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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  Routine block_break
    CodeComponent trial_breaks
      Code Type = Py
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      Before Experiment:
        import math
      Begin Experiment:
        blocks_count = 0
        num_exemps = 16
        num_trials = 5
        #Initialize correct category counter
        category_correct_count = 0
        trial_counter = 0

        #Initialize counter for recognition response
        num_recognized = 0
      Begin Routine:
        #Taking a break every 40 trials
        break_freq = 40
        blocks_total = math.ceil((num_exemps*num_trials)/break_freq)
        block_complete = ''
        categorization_accuracy = ''
        if trials.totalTrials == 0 or trials.totalTrials %break_freq != 0:
            continueRoutine = False
        else:
            blocks_count += 1
            block_complete = '\n\n\n\n\n\nBlocks Completed: {num_done:n}/{num_total:n}'.format(num_done = blocks_count, num_total = blocks_total)
            categorization_accuracy = '\n\n You correctly categorized {percent_correct:.0%} of the images!'.format(percent_correct =  category_correct_count/trial_counter)
            #Reset counters
            category_correct_count = 0
            trial_counter = 0
    KeyboardComponent end_break
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent break_text
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = norm
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      text:
        Great job! Take a break to rest your eyes if you need to.








        Press any button to resume when you are ready
    TextComponent block_count
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $block_complete
      units = norm
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    TextComponent cat_accuracy
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $categorization_accuracy 
      units = norm
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    TextComponent countdown_timer
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 110
      stopVal [duration (s)] = 10
      units = norm
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      text [set every frame]:
        $round(120 - t, ndigits = 1)
  Routine quest_estimate_test
    CodeComponent Load_estimate
      Code Type = Auto->JS
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      Before Experiment:
        try:
            import cPickle as pickle
        except ImportError:  # Python 3.x
            import pickle

        import EASTO_funcs as ea
      Begin Experiment:
        if expInfo['verifyEstimate']:
            #Minmize FullScreen so GUI appears
            win.winHandle.minimize()
            win.winHandle.set_fullscreen(False)
            win.flip()

            quest_file = gui.fileOpenDlg('.')
            if not quest_file:
                #    core.quit()
                print('Using Arbitrary Contrasts for Tests')
                #Gets initiated with target stim loading
                quest_estimates = []
            else:
                with open(quest_file[0], 'rb') as handle:
                    quest_estimates = pickle.load(handle)

            #After Making Selection put the screen back on
            win.winHandle.maximize()
            win.winHandle.set_fullscreen(True)
            win.winHandle.activate()
            win.flip()
Flow
  Routine quest_estimate_test
  Routine gen_instr
  Routine overview
  Routine fixation_2
  LoopInitiator exemps loopType="TrialHandler"
    conditionsFile = exemp_list.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim_img', '../images/AM1.npy'), ('label', 'AM1')]),
      OrderedDict([('stim_img', '../images/AM2.npy'), ('label', 'AM2')]),
      OrderedDict([('stim_img', '../images/AM3.npy'), ('label', 'AM3')]),
      OrderedDict([('stim_img', '../images/AN1.npy'), ('label', 'AN1')]),
      OrderedDict([('stim_img', '../images/AN2.npy'), ('label', 'AN2')]),
      OrderedDict([('stim_img', '../images/AN3.npy'), ('label', 'AN3')]),
      OrderedDict([('stim_img', '../images/FF1.npy'), ('label', 'FF1')]),
      OrderedDict([('stim_img', '../images/FF2.npy'), ('label', 'FF2')]),
      OrderedDict([('stim_img', '../images/FF3.npy'), ('label', 'FF3')]),
      OrderedDict([('stim_img', '../images/FM1.npy'), ('label', 'FM1')]),
      OrderedDict([('stim_img', '../images/FM2.npy'), ('label', 'FM2')]),
      OrderedDict([('stim_img', '../images/FM3.npy'), ('label', 'FM3')]),
      OrderedDict([('stim_img', '../images/HB1.npy'), ('label', 'HB1')]),
      OrderedDict([('stim_img', '../images/HB2.npy'), ('label', 'HB2')]),
      OrderedDict([('stim_img', '../images/HB3.npy'), ('label', 'HB3')]),
      OrderedDict([('stim_img', '../images/HH1.npy'), ('label', 'HH1')]),
      OrderedDict([('stim_img', '../images/HH2.npy'), ('label', 'HH2')]),
      OrderedDict([('stim_img', '../images/HH3.npy'), ('label', 'HH3')]),
      OrderedDict([('stim_img', '../images/OH1.npy'), ('label', 'OH1')]),
      OrderedDict([('stim_img', '../images/OH2.npy'), ('label', 'OH2')]),
      OrderedDict([('stim_img', '../images/OH3.npy'), ('label', 'OH3')]),
      OrderedDict([('stim_img', '../images/ON1.npy'), ('label', 'ON1')])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
    Routine Exemplars
  LoopTerminator exemps
  Routine instr_cues
  LoopInitiator placholder_example loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = exp_exemp.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('exp_blockX', '1st'), ('prob_leftX', [-1, -1, -1]), ('prob_rightX', [1, 1, 1])]),
      OrderedDict([('exp_blockX', '2nd'), ('prob_leftX', [1, 1, 1]), ('prob_rightX', [-1, -1, -1])])]
    Routine instr_exp_cue
  LoopTerminator placholder_example
  Routine Q_cat
  Routine q_cat_exemp
  Routine Q_Rec
  Routine q_rec_exemp
  Routine Summary
  Routine begin_practice
  LoopInitiator trials loopType="MultiStairHandler"
    conditionsFile = ../Quest/Q_tracks.xlsx
    loopType = interleaved staircases
    nReps = 5
    stairType = QUEST
    switchMethod = random
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    conditions:
      [OrderedDict([('stim_img', '../images/AM1.npy'), ('label', 'AM1'), ('startVal', -0.1549019599857432), ('startValSd', 3), ('pThreshold', 0.45), ('beta', 3.5), ('delta', 0.01), ('gamma', 0.01), ('grain', 0.01), ('minVal', -2.654901959985743), ('maxVal', 0), ('range', 5)]),
      OrderedDict([('stim_img', '../images/AM2.npy'), ('label', 'AM2'), ('startVal', -0.1549019599857432), ('startValSd', 3), ('pThreshold', 0.45), ('beta', 3.5), ('delta', 0.01), ('gamma', 0.01), ('grain', 0.01), ('minVal', -2.654901959985743), ('maxVal', 0), ('range', 5)]),
      OrderedDict([('stim_img', '../images/AN1.npy'), ('label', 'AN1'), ('startVal', -0.1549019599857432), ('startValSd', 3), ('pThreshold', 0.45), ('beta', 3.5), ('delta', 0.01), ('gamma', 0.01), ('grain', 0.01), ('minVal', -2.654901959985743), ('maxVal', 0), ('range', 5)]),
      OrderedDict([('stim_img', '../images/AN2.npy'), ('label', 'AN2'), ('startVal', -0.1549019599857432), ('startValSd', 3), ('pThreshold', 0.45), ('beta', 3.5), ('delta', 0.01), ('gamma', 0.01), ('grain', 0.01), ('minVal', -2.654901959985743), ('maxVal', 0), ('range', 5)]),
      OrderedDict([('stim_img', '../images/FF1.npy'), ('label', 'FF1'), ('startVal', -0.1549019599857432), ('startValSd', 3), ('pThreshold', 0.45), ('beta', 3.5), ('delta', 0.01), ('gamma', 0.01), ('grain', 0.01), ('minVal', -2.654901959985743), ('maxVal', 0), ('range', 5)])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
    Routine block_break
    Routine init_fix
    Routine stim
    Routine blank_post
    Routine q_cat
    Routine q_rec
  LoopTerminator trials
  Routine thanks
