PsychoPy2experiment version="2020.2.10"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'],expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001', 'QuestAlt': 'False', 'EyeTrack': 'False', 'HPColor': 'black', 'numTrials': '40'}
  Full-screen window = True
  Monitor = EEG
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = SEA_Quest
  logging level = debug
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stim_img
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .066
      texture resolution = 512
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  Routine instructions
    TextComponent instrText
      letterHeight = .1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this experiment you will be asked to make judgements about simple images

        You will see images of faces, animals, objects, and houses

        You will be asked to indicate the image category and to describe your visual experience of one of the images presented based on a cue that will appear with the questions.

        Press any button to continue
    KeyboardComponent endInstructions
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI_fix
    CodeComponent ITI_Calc_Stim_Load
      Code Type = Auto->JS
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      Before Experiment:
        #Define possible ITI Vals & number of trials in a block
        numTrials = 24*35 * 2 # num trials * num quest tracks
        ITI_vals = np.array([.75, 1])  #Reduced from 1, 1.5 to account for feedback time
        #Sample from exponential distribution
        lam = 1.33 # This is set s.t. 1/lambda = value of first interval. i.e exp dist mean is T1
        xdist = lam * np.exp(-lam * ITI_vals)

        #Normalize and generate counts
        xdist_norm = numTrials * (xdist/ sum(xdist));
        ITI_counts = np.round(xdist_norm).astype(int)

        #Set ITI for each trial for one block
        #And randomly shuffle
        ITI_list = np.random.permutation(np.repeat(ITI_vals, ITI_counts))

        ITI_list = list(ITI_list)
      Begin Experiment:
        #Get list of all scrambled images

        scram_imgs = ['../images/%s%sscram.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]
      Begin Routine:
        #Get ITI for trial
        ITI_duration = ITI_list.pop()

        thisExp.addData('ITI', ITI_duration)
        win.callOnFlip(tk.sendMessage, 'ITI')

        # Loading .npy files
        #Select which stimuli to present
        # Randomly choose between stim presented left or right

        left_or_right = random()

        if left_or_right>0.5:
            #Display stim on left and scrambled on right
            target_left = stim_img
            target_right = np.random.choice(scram_imgs)
            probe_loc = 'L'

        else:
            #Display image on right not on left
            target_left =np.random.choice(scram_imgs)
            target_right = stim_img
            probe_loc = 'R'


        thisExp.addData('stim_left', target_left)
        thisExp.addData('stim_right',target_right)

        # Load Stimulus images

        img_left = np.load(target_left)
        img_right = np.load(target_right)


        #Ramp up and down stim contrast with peak
        #contrast at 66.7 mS (4 frames assuming 60Hz)

        minC = 0.001
        maxC = 10**level

        if not expInfo['frameRate']: #Can't measure FR, e.g. dropping frames
            nC = 4
        elif np.isclose(expInfo['frameRate'], 120, rtol = .1):
            nC = 8 #Num frames of presentation
        elif np.isclose(expInfo['frameRate'], 60, rtol = .1):
            nC =4
        else:
            nC = 8


        grad_contr = np.linspace(minC,maxC,nC)

        #New stim duration in frames
        stim_duration = len(grad_contr)
    PolygonComponent polygon
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine RecResp
    KeyboardComponent resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    PolygonComponent fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03125, 0.05)
      startVal [time (s)] = 0.5
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
        Did you see it?


        Y                 N
  Routine instructions_2
    TextComponent instrText_2
      letterHeight = .1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Every trial a single image will appear on either the left or right side of the cross.

        The image may become harder or easier to see as you continue through the experiment.

        If you don't see anything then make a genuine guess on the category of the image


        Press any button to continue
    KeyboardComponent endInstructions_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine gen_instr
    TextComponent instrText_3
      color = black
      font = Courier New
      letterHeight = .07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this part of the experiment you will be asked to make judgements about simple images

        You will see images of faces, animals, objects, and houses presented on either the left or the right side of the screen.

        You will be asked to indicate the image category and to report your visual experience of the image presented.

        Press any button to continue
    KeyboardComponent endInstructions_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine q_instr
    TextComponent Instr_Img
      color = black
      font = Courier New
      letterHeight = .07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Every trial an image will appear at the left and right the screen.

        A given image may become harder or easier to see over subsequent trials.

        If you do not see anything, make a genuine guess on the category of the image.

        No matter your visual experience, please answer every question.



        Press any button to continue
    KeyboardComponent endInstructions_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_exp
    TextComponent beginexp
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        If you do not have any questions or concerns:





        press any button to begin the experiment
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    CodeComponent trial_breaks_2
      Code Type = Auto->JS
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      Begin Routine:
        categorization_accuracy = '\n\n\n You correctly categorized {percent_correct:.0%} images!'.format(percent_correct =  category_correct_count/trial_counter)
    TextComponent thanksMsg
      color = black
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Thank you!
        You can relax now





        The next part of the experiment will begin shortly. It may take a few minutes.
    TextComponent cat_accuracy_2
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text [set every repeat] = $categorization_accuracy
      units = norm
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    KeyboardComponent EndExp
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_2
    TextComponent fix_instr
      color = black
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        As a reminder: remember to always keep your eyes on this cross when you see it











        Press any button to continue
    PolygonComponent Fix_Example
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = .7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    KeyboardComponent endInstructions_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Quest_Type
    CodeComponent Quest_alt
      Code Type = Py
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      Before Experiment:
        #Import necessary packages
        import pandas as pd
        try:
            import cPickle as pickle
        except ImportError:  # Python 3.x
            import pickle

        import EASTO_funcs as ea
      Begin Experiment:
        if expInfo['QuestAlt'] == True:
            #Minmize FullScreen so GUI appears
            win.winHandle.minimize()
            win.winHandle.set_fullscreen(False)
            win.flip()

            # Read Q_Tracks Excel (all images) and convert to dictionary
            quest_tracks_xls = os.getcwd() + os.sep + 'Q_tracks.xlsx'
            q_df = pd.read_excel(quest_tracks_xls)
            q_dict = q_df.to_dict('record')

            #Read in qMini excel as dataframe
            qMini_tracks_xls = os.getcwd() + os.sep + 'QMini_tracks.xlsx'
            qMini_df = pd.read_excel(qMini_tracks_xls)

            stim_cats = ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH', 'ON']

            #Get list of Images into dict for UI
            imgs_list = ['%s%s' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]
            imgs_dict = {'%s%s' %(stim_cats[i], x): False  for i in range(len(stim_cats)) for x in range(1,3)}
            imgs_dict['qMini'] = False
            dlg = gui.DlgFromDict(dictionary=imgs_dict, sortKeys=False, title='Choose Images/Thresholding')

            if dlg.OK == False:
                core.quit()  # user pressed cancel

            # If qMini is selected, load quest_estimate.
            if imgs_dict['qMini']:
                #Import QUEST estimates for subject
                quest_file = gui.fileOpenDlg('.')
                if not quest_file:
                    #    core.quit()
                    print('Using Arbitrary Contrasts for Tests')
                    #Gets initiated with target stim loading
                    quest_estimates = []
                else:
                    with open(quest_file[0], 'rb') as handle:
                        quest_estimates = pickle.load(handle)

            # Get Which Images were selected from UI, will ignore qMini since it is not in imgs_list
            q_select = [cond for cond, img in zip(q_dict, imgs_list) if imgs_dict[img]]
            # Rewrite as dataframe (Probably do not need to turn to a dict in the first place)
            q_alt_df = pd.DataFrame.from_records(q_select)

            if imgs_dict['qMini']:
                q_alt_df = pd.concat([q_alt_df, qMini_df])
            #Save as CSV
            q_alt_df.to_csv('Q_AltTracks.csv', index = False)

            q_conditions = 'Q_AltTracks.csv'

            #After Making Selection put the screen back on
            win.winHandle.maximize()
            win.winHandle.set_fullscreen(True)
            win.winHandle.activate()
            win.flip()
        else:
            q_conditions = 'Q_tracks.xlsx'
  Routine eyetrack_calib
    CodeComponent eye_track_init
      Code Type = Py
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      Before Experiment:
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        #%% Eyelink Init Code Comparison
        # SETP 2: open a connection to the tracker
        # replace the IP address with None will open a simulated connection
        if expInfo['EyeTrack']:
            tk = pylink.EyeLink('100.1.1.1')

            scnWidth, scnHeight = win.size
            # STEP 3: Open an EDF data file on the Host and write a file header
            # The file name should not exceeds 8 characters
            dataFileName = expInfo['subject'] + '_' + expInfo['session']+ 'Q.EDF'
            tk.openDataFile(dataFileName)
            # add personalized data file header (preamble text)
            tk.sendCommand("add_file_preamble_text 'SEA QUESTExp'")

        else:
            pylink.EyeLink.dummy_open
            tk = pylink.EyeLink(None)
      Begin Routine:
        if expInfo['EyeTrack']:


            # set up a custom graphics envrionment (EyeLinkCoreGraphicsPsychopy) for calibration
            genv = EyeLinkCoreGraphicsPsychoPy(tk, win)

            # Configure the calibration target, could be a 'circle',
            # a movie clip ('movie'), a 'picture', or a 'spiral', the default is a circle
            genv.calTarget = 'circle'


            pylink.openGraphicsEx(genv)

            # STEP 5: Set up the tracker
            # put the tracker in idle mode before we change its parameters
            tk.setOfflineMode()
            pylink.pumpDelay(100)

            # IMPORTANT: send screen resolution to the tracker
            # see Eyelink Installation Guide, Section 8.4: Customizing Your PHYSICAL.INI Settings
            tk.sendCommand("screen_pixel_coords = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

            # save screen resolution in EDF data, so Data Viewer can correctly load experimental graphics
            # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
            tk.sendMessage("DISPLAY_COORDS = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

            # sampling rate, 250, 500, 1000, or 2000; this command is not supported for EyeLInk II/I trackers
            # tk.sendCommand("sample_rate 1000")

            # detect eye events based on "GAZE" (or "HREF") data
            tk.sendCommand("recording_parse_type = GAZE")

            # Saccade detection thresholds: 0-> standard/coginitve, 1-> sensitive/psychophysiological
            # see Eyelink User Manual, Section 4.3: EyeLink Parser Configuration
            tk.sendCommand("select_parser_configuration 0")

            # choose a calibration type, H3, HV3, HV5, HV13 (HV = horiztonal/vertical),
            # tk.setCalibrationType('HV9') also works, see the Pylink manual
            tk.sendCommand("calibration_type = HV9")

            # tracker hardware, 1-EyeLink I, 2-EyeLink II, 3-Newer models (1000/1000Plus/Portable DUO)
            hardware_ver = tk.getTrackerVersion()

            # tracking software version
            software_ver = 0
            if hardware_ver == 3:
                tvstr = tk.getTrackerVersionString()
                vindex = tvstr.find("EYELINK CL")
                software_ver = float(tvstr.split()[-1])

            # sample and event data saved in EDF data file
            # see sectin 4.6 of the EyeLink user manual, software version > 4 adds remote tracking (and thus HTARGET)
            tk.sendCommand("file_event_filter = LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT")
            if software_ver >= 4:
                tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
            else:
                tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

            # sample and event data available over the link
            tk.sendCommand("link_event_filter = LEFT,RIGHT,FIXATION,FIXUPDATE,SACCADE,BLINK,BUTTON,INPUT")
            if software_ver >= 4:
                tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
            else:
                tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

            # STEP 6:  Show task instructions and calibrate the tracker
            msg = visual.TextStim(win, text='Calibration will begin shortly\n' +
                                            'In the task, quickly move your eyes to look at a dot (target) when it appears')
            msg.draw()
            win.flip()
            event.waitKeys()

            # set up the camera and calibrate the tracker
            tk.doTrackerSetup()

        else:
            continueRoutine = False
  Routine eyetrack_recalib
    CodeComponent eye_recalib
      Code Type = Auto->JS
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      Begin Routine:
        #Taking a break every N trials
        #Recalibrate eyetracker after break
        if trials.totalTrials == 0 or trials.totalTrials %break_freq != 0:
            continueRoutine = False
        else:
            if expInfo['EyeTrack']:
                # set up a custom graphics envrionment (EyeLinkCoreGraphicsPsychopy) for calibration
                genv = EyeLinkCoreGraphicsPsychoPy(tk, win)

                # Configure the calibration target, could be a 'circle',
                # a movie clip ('movie'), a 'picture', or a 'spiral', the default is a circle
                genv.calTarget = 'circle'

                pylink.openGraphicsEx(genv)

            #    # STEP 5: Set up the tracker
            #    # put the tracker in idle mode before we change its parameters
            #    tk.setOfflineMode()
            #    pylink.pumpDelay(100)

                # IMPORTANT: send screen resolution to the tracker
                # see Eyelink Installation Guide, Section 8.4: Customizing Your PHYSICAL.INI Settings
                tk.sendCommand("screen_pixel_coords = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

                # save screen resolution in EDF data, so Data Viewer can correctly load experimental graphics
                # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
                tk.sendMessage("DISPLAY_COORDS = 0 0 %d %d" % (scnWidth-1, scnHeight-1))

                # sampling rate, 250, 500, 1000, or 2000; this command is not supported for EyeLInk II/I trackers
                # tk.sendCommand("sample_rate 1000")

                # detect eye events based on "GAZE" (or "HREF") data
                tk.sendCommand("recording_parse_type = GAZE")

                # Saccade detection thresholds: 0-> standard/coginitve, 1-> sensitive/psychophysiological
                # see Eyelink User Manual, Section 4.3: EyeLink Parser Configuration
                tk.sendCommand("select_parser_configuration 0")

                # choose a calibration type, H3, HV3, HV5, HV13 (HV = horiztonal/vertical),
                # tk.setCalibrationType('HV9') also works, see the Pylink manual
                tk.sendCommand("calibration_type = HV9")

                # tracker hardware, 1-EyeLink I, 2-EyeLink II, 3-Newer models (1000/1000Plus/Portable DUO)
                hardware_ver = tk.getTrackerVersion()

                # tracking software version
                software_ver = 0
                if hardware_ver == 3:
                    tvstr = tk.getTrackerVersionString()
                    vindex = tvstr.find("EYELINK CL")
                    software_ver = float(tvstr.split()[-1])

                # sample and event data saved in EDF data file
                # see sectin 4.6 of the EyeLink user manual, software version > 4 adds remote tracking (and thus HTARGET)
                tk.sendCommand("file_event_filter = LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT")
                if software_ver >= 4:
                    tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
                else:
                    tk.sendCommand("file_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

                # sample and event data available over the link
                tk.sendCommand("link_event_filter = LEFT,RIGHT,FIXATION,FIXUPDATE,SACCADE,BLINK,BUTTON,INPUT")
                if software_ver >= 4:
                    tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,HTARGET,INPUT")
                else:
                    tk.sendCommand("link_sample_data  = LEFT,RIGHT,GAZE,GAZERES,PUPIL,HREF,AREA,STATUS,INPUT")

                # STEP 6:  Show task instructions and calibrate the tracker
                msg = visual.TextStim(win, text='Calibration will begin shortly\n' +
                                                'In the task, quickly move your eyes to look at a dot (target) when it appears')
                msg.draw()
                win.flip()
                event.waitKeys()


                # set up the camera and calibrate the tracker
                tk.doTrackerSetup()
            else:
                continueRoutine = False
  Routine block_break
    CodeComponent trial_breaks
      Code Type = Py
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      Before Experiment:
        import math
      Begin Experiment:
        blocks_count = 0
        num_exemps = 16
        num_trials = int(expInfo['numTrials'])
        #Initialize correct category counter
        category_correct_count = 0
        trial_counter = 0
        #Counter for eye tracker
        trial_count = 0
      Begin Routine:
        #Taking a break every 80 trials
        break_freq = 80
        blocks_total = math.ceil((num_exemps*num_trials)/break_freq)
        block_complete = ''
        categorization_accuracy = ''
        if trials.totalTrials == 0 or trials.totalTrials %break_freq != 0:
            continueRoutine = False
        else:
            blocks_count += 1
            block_complete = '\n\n\n\n\n\nBlocks Completed: {num_done:n}/{num_total:n}'.format(num_done = blocks_count, num_total = blocks_total)
            categorization_accuracy = '\n\n You correctly categorized {percent_correct:.0%} of the images!'.format(percent_correct =  category_correct_count/trial_counter)
            win.callOnFlip(tk.sendMessage, 'break')
            #Reset category correct and trial counters
            category_correct_count = 0
            trial_counter = 0
    KeyboardComponent end_break
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent break_text
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      units = norm
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      text:
        Great job! Take a break to rest your eyes if you need to.








        Press any button to resume when you are ready
    TextComponent block_count
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $block_complete
      units = norm
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    TextComponent cat_accuracy
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text [set every repeat] = $categorization_accuracy 
      units = norm
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    TextComponent countdown_timer
      font = Courier New
      letterHeight = 0.07
      startVal [time (s)] = 110
      stopVal [duration (s)] = 10
      units = norm
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      text [set every frame]:
        $round(120 - t, ndigits = 1)
  Routine init_fix
    CodeComponent ITI_Select
      Code Type = Py
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      Begin Experiment:
        if expInfo['HPColor'] == 'black':
            place_real = [-1.0,-1.0,-1.0]
            place_scram = [1.0,1.0,1.0]
        elif expInfo['HPColor'] == 'white':
            place_real = [1.0,1.0,1.0]
            place_scram = [-1.0,-1.0,-1.0]

        ### Make Stim list for qMini
        if expInfo['QuestAlt'] == True:
            if imgs_dict['qMini']:
                stim_cats = ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH', 'ON']

                real_imgs = ['../images/%s%s.npy' %(stim_cats[i], x) for i in range(len(stim_cats)) for x in range(1,3)]

            #For qMini, run 80 trials (2 staircases of 40 trials), thus 5 repeats per image
                qMiniStimulusList = list(np.repeat(real_imgs, 5))
                shuffle(qMiniStimulusList)

        #Define possible ITI Vals & number of trials in a block
        numTotalTrials = num_exemps * num_trials #Number of exemplars (staircases) * num trials per staircase
        ITI_vals = np.array([.75, 1])  #Reduced from 1, 1.5 to account for feedback time
        #Sample from exponential distribution
        lam = 1.33 # This is set s.t. 1/lambda = value of first interval. i.e exp dist mean is T1
        xdist = lam * np.exp(-lam * ITI_vals)

        #Normalize and generate counts
        xdist_norm = numTotalTrials * (xdist/ sum(xdist));
        ITI_counts = np.round(xdist_norm).astype(int)

        #Set ITI for each trial for one block
        #And randomly shuffle
        ITI_list = np.random.permutation(np.repeat(ITI_vals, ITI_counts))

        ITI_list = list(ITI_list)
      Begin Routine:
        ##% Eyelink Code
        # send the standard "TRIALID" message to mark the start of a trial
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
        trial_count += 1 # Manual trial counter for eyelink
        trial_counter += 1 # Manual counter for categorization accuracy (gets reset every block)
        tk.sendMessage('TRIALID %d' % trial_count)
        # record_status_message : show some info on the Host PC - OPTIONAL
        # here we show how many trial has been tested
        tk.sendCommand("record_status_message 'Trial number %s'"% trial_count)
        # start recording
        # arguments: sample_to_file, events_to_file, sample_over_link, event_over_link (1-yes, 0-no)
        err = tk.startRecording(1, 1, 1, 1)
        pylink.pumpDelay(100)  # wait for 100 ms to cache some samples

        #Get ITI for trial
        ITI_duration = ITI_list.pop()

        thisExp.addData('ITI', ITI_duration)
        win.callOnFlip(tk.sendMessage, 'ITI')

        # Loading .npy files
        #Select which stimuli to present

        # For mini Quest, each exemplar is presented same number of times
        # Decide which stimulus image to present randomly.
        if label == 'qMini':
            stim_img = qMiniStimulusList.pop()

        # Randomly choose between stim presented left or right
        # Scrambled image is always the scrambled version of the real counterpart

        left_or_right = random()

        if left_or_right>0.5:
            #Display stim on left and scrambled on right
            target_left = stim_img
            target_right = stim_img[:13] + 'scram.npy'
            probe_loc = 'L'
            prob_cue_L = place_real
            prob_cue_R = place_scram
            thisExp.addData('target_stimulus', target_left)

        else:
            #Display image on right not on left
            target_left = stim_img[:13] + 'scram.npy'
            target_right = stim_img
            probe_loc = 'R'
            prob_cue_L= place_scram
            prob_cue_R = place_real
            thisExp.addData('target_stimulus', target_right)

        thisExp.addData('stim_left', target_left)
        thisExp.addData('stim_right',target_right)



        # Load Stimulus images

        img_left = np.load(target_left)
        img_right = np.load(target_right)


        #Ramp up and down stim contrast with peak
        #contrast at 66.7 mS (4 frames assuming 60Hz)

        minC = 0.001

        #For qMini staircases, the "level" is being defined as a deviation from the initial QUEST estimate done in a previous session
        if label == 'qMini':
            maxC = quest_estimates[stim_img[:13]] * 10**level
        else:
            maxC = 10**level

        #Presenting Stimuli for 300 ms for practice instead of 66 ms
        if not expInfo['frameRate']: #Can't measure FR, e.g. dropping frames
            nC = 4
        elif np.isclose(expInfo['frameRate'], 120, rtol = .1):
            nC = 8 #Num frames of presentation
        elif np.isclose(expInfo['frameRate'], 60, rtol = .1):
            nC = 4
        else:
            nC = 8


        grad_contr = np.linspace(minC,maxC,nC)

        #New stim duration in frames
        stim_duration = len(grad_contr)
    PolygonComponent place_left_3
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent place_right_3
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_R_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent hi_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent long_back_L_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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    PolygonComponent pre_cue_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_duration
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  Routine stim
    CodeComponent stim_select_2
      Code Type = Py
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      Before Experiment:
        #Make Filter store in params dict
        # Make param dict
        params = {'imsize' : [300,300],
              'imbgrd' : 127,
              'categories' : ['AM', 'AN', 'FF', 'FM', 'HB', 'HH', 'OH','ON']}

        params['filter'] = ea.make_filter(params)
      Begin Routine:
        win.callOnFlip(tk.sendMessage, 'stimOnset')
      Each Frame:
        #Set graded conntrast of images for entire presentation

        if frameN <stim_duration:
            F = grad_contr[frameN] * params['filter']  #Keep real and scrambled at same contrast regardless
            left_stim = np.array(img_left * F)
            right_stim = np.array(img_right * F)
      End Routine:
        ## End Routine
        #win.saveMovieFrames('stim_img'+str(trials.totalTrials)+'.png')
    PolygonComponent place_left_4
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent place_right_4
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_R_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent hi_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent long_back_L_4
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = stim_duration
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    PolygonComponent stim_fix_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = stim_duration
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    ImageComponent stim_right_2
      flipVert = True
      image [set every frame] = $right_stim
      pos = (4, 0)
      size = (4, 4)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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    ImageComponent stim_left_2
      flipVert = True
      image [set every frame] = $left_stim
      pos = (-4, 0)
      size = (4, 4)
      startVal [frame N] = 0
      stopVal [duration (frames)] = stim_duration
      texture resolution = 512
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  Routine blank_post
    PolygonComponent post_stim_fix
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      opacity = 0.7
      shape = cross
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_left_5
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent place_right_5
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_R_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent hi_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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    PolygonComponent long_back_L_5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .4
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  Routine q_cat
    CodeComponent q1_shuffle
      Code Type = Auto->JS
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      Begin Routine:
        # Randomize Order of FAOH
        #Initialize cat components
        win.callOnFlip(tk.sendMessage, 'qCatOnset')
        if probe_loc == 'L':
            probe_cue_img_2 = '../cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img_2 = '../cues/cue_right.png'

        cats = ['Face', 'Animal', 'Object', 'House']
        shuffle(cats)
        cat_question = (
                        u'Image Category:\n\n\n\n\n\n\n\n'
                        u'{cats1:\u00a0^9} {cats2:\u00a0^9} {cats3:\u00a0^9} {cats4:\u00a0^9}\n\n\n'
                        u'{b1:\u00a0^9} {b2:\u00a0^9} {b3:\u00a0^9} {b4:\u00a0^9}'.format(cats1 = cats[0].encode().decode('utf-8'),
                                                                   cats2 = cats[1].encode().decode('utf-8'),
                                                                   cats3 = cats[2].encode().decode('utf-8'),
                                                                   cats4 = cats[3].encode().decode('utf-8'),
                                                                   b1 = u'1',b2 = u'2',b3 = u'3',b4 = u'4'
                                                                    ))
      End Routine:
        # Map buttons to shuffled cats, assumed read L-R

        buttons = ['6','7','8','9']
        categories = [c[0] for c in cats]

        button_map = dict(zip(categories,buttons))
        cat_map  = dict(zip(buttons,categories))
        #
        if probe_loc == 'L':
            corAns = button_map[target_left[10]] # Index first letter after " images/" in target

        elif probe_loc == 'R':
            corAns = button_map[target_right[10]] # Index first letter after " images/" in target

        correct_category = cat_map[corAns]
        thisExp.addData('objective_category', correct_category)

        if cat_resp.keys:
            category_response = cat_map[cat_resp.keys[-1]]
            thisExp.addData('category_response', category_response)

        else: #If no response
            category_response = None
            thisExp.addData('category_response', category_response)


        #Calculate categorization accuracy
        if correct_category == category_response:
            thisExp.addData('category_correct', 1)
            category_correct_count += 1
        else:
            thisExp.addData('category_correct', 0)
    TextComponent q_category
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
      wrapWidth = 500
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      text [set every repeat]:
        $cat_question
    KeyboardComponent cat_resp
      allowedKeys = '6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent probe_cue_cat
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img_2
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_6
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_6
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_6
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine q_rec
    CodeComponent q2_str_dat
      Code Type = Auto->JS
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      Begin Experiment:
        rec_question  = (u'Meaningful visual experience: \n\n\n\n\n\n\n\n'
                    u'{Y:\u00a0^15} {N:\u00a0^15}''\n\n\n '
                    u'{b2:\u00a0^15} {b3:\u00a0^15}'.format(Y = u'Yes',
                                                       N = u'No',
                                                       b2 = u'2',
                                                       b3 = u'3 '))
      Begin Routine:
        if probe_loc == 'L':
            probe_cue_img_2 = '../cues/cue_left.png'

        elif probe_loc == 'R':
            probe_cue_img_2 = '../cues/cue_right.png'
      End Routine:
        if rec_resp.keys == '7':
            thisExp.addData('recognition', 'R')
        else: #For "No" or No Response
            thisExp.addData('recognition', 'U')

        #Send Trial Information to Eyetracker for later condition sorting
        ##%  Eye Link Code
        #Stop recording
        tk.stopRecording()
        # send trial variables to record in the EDF data file
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration

        # send over the standard 'TRIAL_RESULT' message to mark the end of trial
        # see Data Viewer User Manual, Section 7: Protocol for EyeLink Data to Viewer Integration
        tk.sendMessage('TRIAL_RESULT %d' % trial_count)
    TextComponent q_recognition
      font = Courier New
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $rec_question
      units = norm
      wrapWidth = 500
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    KeyboardComponent rec_resp
      allowedKeys = '7','8'
      correctAns = 7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    ImageComponent probe_cue_rec
      color = $[-1,-1,-1]
      image [set every repeat] = $probe_cue_img_2
      size = (0.75, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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    PolygonComponent place_left_7
      fillColor = None
      lineColor [set every repeat] = $prob_cue_L
      lineWidth = 3
      opacity = 0.7
      pos = (-4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent place_right_7
      fillColor = None
      lineColor [set every repeat] = $prob_cue_R
      lineWidth = 3
      opacity = 0.7
      pos = (4, 0)
      shape = rectangle
      size = (4.2, 4.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_R_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent hi_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (3.2, 4.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent long_back_L_7
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos = (-4, 0)
      shape = rectangle
      size = (4.8, 3.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  Routine Quest_Type
  Routine gen_instr
  Routine q_instr
  Routine fixation_2
  Routine begin_exp
  Routine eyetrack_calib
  LoopInitiator trials loopType="MultiStairHandler"
    conditionsFile = $q_conditions
    loopType = interleaved staircases
    nReps = num_trials
    stairType = quest
    switchMethod = random
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    Routine block_break
    Routine eyetrack_recalib
    Routine init_fix
    Routine stim
    Routine blank_post
    Routine q_cat
    Routine q_rec
  LoopTerminator trials
  Routine thanks
